WorkflowBuilder(Version=2.3.0)
StringProperty(Value=Z:\mormyrid_data\)
-> Bonsai.Scripting.PythonTransform
  Script:
    import time
    import os
    from datetime import date
    today = date.today()
    @returns(str)
    def process(value):
      sep="\\"
      month='{0:d}'.format(today.month)
      d='{:%Y%m%d}'.format(today)
      path=value+d+sep
      if not os.path.exists(path):
        os.mkdir(path)

      fname = path+'counter.txt'
      if not os.path.isfile(str(fname)):
        file= open(fname,'w')
        file.write(str(0))
        file.close()


      return path
-> ReplaySubject DataPath(BufferSize=nil)

ExternalizedPropertyOfBooleanBooleanProperty SaveEphys(MemberName=Save, Value=true) => #8
ExternalizedTimeSpanOfExternalizedTimeSpanOfTimeSpanWindow SegmentInterval(MemberName=Value, Value=PT30M) => #11
-> ExternalizedPropertyOfNullableOfTimeSpanTimeSpanWindow EphysTimeShift(MemberName=TimeShift, Value="") => #13
#11 -> ExternalizedTimeSpanOfTimeSpanWindow EphysTimeSpan(MemberName=TimeSpan, Value=PT30M) => #16
#11 -> ExternalizedTimeSpanOfTimeSpanWindow VideoTimeSpan(MemberName=TimeSpan, Value=PT30M) => #22
#11 -> ExternalizedPropertyOfNullableOfTimeSpanTimeSpanWindow VideoTimeShift(MemberName=TimeShift, Value="") => #23
ExternalizedPropertyOfBooleanBooleanProperty SaveVideo(MemberName=Save, Value=true) => #12
Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #15
#15, #22, #23 -> TimeSpanWindow(TimeSpan=PT30M, TimeShift=PT30M) => #14
#14, #12 -> SelectMany PeriodicVideo
    WorkflowInput Source1 => #10
    -> MemberSelector(Selector=Source.Image) => #8
    -> NestedWorkflow Fishtracker
        WorkflowInput Source1
        -> Bonsai.Vision.MaskPolygon
          Regions
            ArrayOfPoint(Point(X=1165, Y=1109), Point(X=1180, Y=670), Point(X=1150, Y=81), Point(X=29, Y=1179))
            ArrayOfPoint(Point(X=102, Y=43), Point(X=1168, Y=79), Point(X=59, Y=1145), Point(X=126, Y=133))
          MaskType=ToZero
          FillValue(Val0=128, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=72, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Source.Centroid) => #0
        -> WorkflowOutput
        ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #10
        ExternalizedPropertyOfInt32IntProperty Y(MemberName=Value, Value=600)
        -> IntProperty(Value=600) => #13
        ExternalizedPropertyOfInt32IntProperty X(MemberName=Value, Value=600)
        -> IntProperty(Value=600) => #17
        #0, #13, #17 -> CombineLatest
        -> Bonsai.Scripting.PythonTransform => #12
          Script:
            @returns(bool)
            def process(value):
              if(value.Item1.Y<value.Item2 and value.Item1.X>value.Item3):
                return False
              else:
                return True
        Source2=#12 -> Condition
            WorkflowInput Source1 => #0
            -> Skip(Count=1)
            -> BitwiseNot => #2
            #2, #0 -> Zip => #5
            Source2=#5 -> LogicalAnd => #4
            Source2=#4 -> WorkflowOutput
        -> StringProperty(Value=E) => #11
        Source2=#10, Source2=#11 -> SelectMany ArduinoCommand
            WorkflowInput Source1 => #2
            ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #3
            #2, #3 -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
            -> WorkflowOutput
        #12 -> Condition
            WorkflowInput Source1 => #0
            -> BitwiseNot => #2
            #0 -> Skip(Count=1) => #3
            #3, #2 -> Zip => #5
            Source2=#5 -> LogicalAnd => #4
            Source2=#4 -> WorkflowOutput
        -> StringProperty(Value=S) => #16
        Source2=#10, Source2=#16 -> SelectMany ArduinoCommand
            WorkflowInput Source1 => #2
            ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #3
            #2, #3 -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
            -> WorkflowOutput
    -> NestedWorkflow SaveTracking
        WorkflowInput Source1 => #0
        SubscribeSubject DataPath => #6
        StringProperty(Value=tracking_) => #7
        SubscribeSubject FileNum => #8
        #6, #7, #8 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter TrackingFile(MemberName=FileName, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\tracking_data_.csv) => #3
        #3, #0 -> Bonsai.IO.CsvWriter(FileName=Z:\mormyrid_data\20200813\tracking_5, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.X,Source.Y")
        -> WorkflowOutput
    #8 -> MemberSelector(Selector=Source.Size)
    -> Take(Count=1)
    -> ReplaySubject FrameSize(BufferSize=nil)
    ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #12
    #10, #12 -> NestedWorkflow SaveVideoTS
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.Metadata.embeddedFrameCounter) => #12
        -> Skip(Count=1) => #9
        #9, #12 -> Zip
        -> Subtract => #5
        #0 -> MemberSelector(Selector=Source.Metadata.embeddedTimeStamp) => #13
        #13, #5 -> Zip => #3
        -> WorkflowOutput
        SubscribeSubject DataPath => #10
        StringProperty(Value=videoTS_) => #11
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #15
        #3, #15 -> Condition => #14
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #16
        #10, #11, #16 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter VideoTSFile(MemberName=FileName, Value=C:\Users\Ephys\iCloudDrive\Documents\Mormyrid_Data\Data\frame_data_.csv) => #4
        #4, #14 -> Bonsai.IO.CsvWriter(FileName=Z:\mormyrid_data\20200813\videoTS_5, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Item1,Source.Item2")
    -> MemberSelector(Selector=Source.Item2)
    #12, #10 -> NestedWorkflow SaveVideoSyncTS
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.Metadata.embeddedFrameCounter) => #4
        #0 -> MemberSelector(Selector=Source.Image)
        -> Bonsai.Vision.Grayscale => #11
        SubscribeSubject DataPath => #9
        StringProperty(Value=video_syncTS) => #10
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #14
        ExternalizedPropertyOfDoubleRoiActivityDetected LEDThreshold(MemberName=Threshold, Value=100) => #15
        #11, #15 -> NestedWorkflow DetectLEDs
            WorkflowInput Source1
            -> Bonsai.Vision.Threshold(ThresholdValue=200, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=1104, Y=1125), Point(X=1130, Y=1126), Point(X=1127, Y=1175), Point(X=1101, Y=1176)))) => #7
            ExternalizedPropertyOfDoubleRoiActivityDetected Threshold(MemberName=Threshold, Value=100) => #8
            #7, #8 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=100) => #2
            -> Skip(Count=1) => #1
            #2 -> BitwiseNot => #6
            #1, #6 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #5 -> Sample => #2
        #2, #14 -> Condition => #13
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> WorkflowOutput
        SubscribeSubject FileNum => #16
        #9, #10, #16 -> Zip
        -> Add => #6
        #6, #13 -> CombineLatest => #3
        Source2=#3 -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              fname=value.Item1
              file= open(fname,'a')
              file.write(str(value.Item2)+'\n')
              file.close()
              return True
    #8, #12 -> Condition => #13
        WorkflowInput Source1

        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    SubscribeSubject FileNum => #23
    StringProperty(Value=\\.\pipe\video_all) => #24
    #24, #23 -> CombineLatest
    -> Add
    -> ExternalizedPropertyOfStringImageWriter Path(MemberName=Path, Value=\\.\pipe\video_all0) => #15
    #13, #15 -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video_all6, Suffix=None, Overwrite=false)
    -> WorkflowOutput

    SubscribeSubject FrameSize => #11
    Timer(DueTime=PT2S, Period=PT0S) => #17
    #11, #17 -> SubscribeWhen => #16
    SubscribeSubject DataPath => #18
    #16, #18 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform SaveCroppedVideo
      Script:
        import datetime
        import time
        from datetime import date
        from shutil import copyfile
        import os
        import clr
        clr.AddReference("Bonsai.System")
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from Bonsai.IO import PathHelper, PathSuffix
        pipename = r'\\.\pipe\video_all'
        dayone = date.today()
        #trackpath = r'Z:\mormyrid_data\TrackingVideos'

        def process(value):
          file = open(value.Item2+'counter.txt','r')
        #  num=str(int(file.read())-1)
          num = file.read()
          file.close()

        #  if int(num)>0:
        #    pnum=str(int(num)-1)
        #    fname = value.Item2 +'video_' + pnum + '.avi'
        #    cfname= trackpath + r'\video_' + pnum + '.avi'
        #    copyfile(fname,cfname)

          fname = value.Item2 +'video_' + num + '.avi'
        #  cfname= trackpath + r'\video_' + num + '.avi'

          pipe=pipename + num

          num = str(int(num)+1)
          file = open(value.Item2 + 'counter.txt','w')
          file.write(num)
          file.close()
          inrate=50
          outrate=inrate
          brate="3M"
          width = value.Item1.Width
          height =value.Item1.Height
          os.system(str.format(r'ffmpeg -f rawvideo -vcodec rawvideo -y -s {0}x{1} -r {2} -pix_fmt gray -i {3} -vcodec mpeg4 -pix_fmt yuv420p -vb {4} -r {5} {6}',width,height,inrate,pipe,brate,outrate,fname))

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)
ExternalizedPropertyOfAmplifierSampleRateRhd2000EvalBoard SampleRate(MemberName=SampleRate, Value=SampleRate30000Hz)
-> Bonsai.Ephys.Rhd2000EvalBoard => #1
  BitFileName=rhd2000_usb3.bit
  SampleRate=SampleRate30000Hz
  ExternalFastSettleEnabled=false
  LowerBandwidth=1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=false
  CableDelayA=nil
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
#1, #16, #13 -> TimeSpanWindow(TimeSpan=PT30M, TimeShift=PT30M) => #5
#5, #8 -> SelectMany PeriodicEphys
    WorkflowInput Source1 => #1
    ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #2
    #1, #2 -> NestedWorkflow SavePulses
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.BoardAdcData) => #8
        SubscribeSubject DataPath => #6
        StringProperty(Value=pulses_) => #7
        ExternalizedPropertyOfDoubleExternalizedPropertyOfDoubleFrequencyFilter InputSampleRate(MemberName=InputSampleRate, Value=30000) => #9
        ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=0.1, double=0.5, double=0.5)) => #10
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #11
        SubscribeSubject FileNum => #12
        #6, #7, #12 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter PulsesFile(MemberName=FileName, Value=C:\Users\Ephys\iCloudDrive\Documents\Mormyrid_Data\Data\20171201\EOD_data.csv) => #2
        #8, #2, #9, #10, #11 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #33
            -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #17
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #14
            #17, #14 -> Zip
            -> Add => #16
            #33 -> Bonsai.Dsp.SelectChannels(Channels(int=0)) => #21
            #33 -> Bonsai.Dsp.SelectChannels(Channels(int=2)) => #24
            ExternalizedPropertyOfDoubleFrequencyFilter Cutoff_HPF(MemberName=Cutoff1, Value=500) => #10
            ExternalizedPropertyOfDoubleExternalizedPropertyOfDoubleFrequencyFilter InputSampleRate(MemberName=Value, Value=30000) => #15
            -> ExternalizedPropertyOfDoubleFrequencyFilter FilterSampleRate(MemberName=SamplingFrequency, Value=30000) => #9
            #21, #9, #10 -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=30000, Cutoff1=500, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #7
            #15 -> ExternalizedPropertyOfDoubleDoubleProperty RateSampleRate(MemberName=InputSampleRate, Value=30000) => #35
            ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName, Value=Z:\mormyrid_data\20200813\pulses_5) => #19
            ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=0.1, double=0.5, double=0.5)) => #20
            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #23
            ExternalizedPropertyOfDoubleFrequencyFilter Cutoff_LPF(MemberName=Cutoff1, Value=50) => #32
            #24, #9, #32 -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=30000, Cutoff1=50, Cutoff2=0, KernelLength=60, FilterType=LowPass)
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=BinaryInv)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #28
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #27
            #28, #27 -> Zip
            -> Add => #25
            #7, #16, #25 -> Zip
            -> Bonsai.Dsp.Concat(Axis=0) => #5
            #5, #20 -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.1, double=0.5, double=0.5), WaveformRefinement=None) => #4
            -> WorkflowOutput
            #4 -> Condition => #3
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #2
                WorkflowInput Source1
                -> Concat => #2
                -> MemberSelector(Selector=Source.SampleIndex) => #1
                #2 -> MemberSelector(Selector=Source.ChannelIndex) => #3
                #3, #1 -> Zip
                -> WorkflowOutput
            #2, #23 -> Condition => #22
                WorkflowInput Source1

                ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            Source2=#19, Source2=#22 -> Bonsai.IO.CsvWriter(FileName=Z:\mormyrid_data\20200813\pulses_5, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false, Selector=Source)
            #3, #35 -> NestedWorkflow "EOD rate"
                ExternalizedPropertyOfDoubleDoubleProperty InputSampleRate(MemberName=Value, Value=30000)
                -> DoubleProperty(Value=30000) => #3
                WorkflowInput Source1
                -> SelectMany "EOD index" => #7
                    WorkflowInput Source1
                    -> Concat
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Source.ChannelIndex)
                        -> Equal(Operand=IntProperty(Value=0))
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Source.SampleIndex)
                    -> WorkflowOutput
                -> Skip(Count=1) => #6
                #6, #7 -> Zip
                -> Subtract => #4
                #3, #4 -> CombineLatest
                -> Divide
                -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedPropertyOfArrayOfInt32SelectChannels AdcChannels(MemberName=Channels, Value(int=0, int=1, int=3)) => #7
    #1, #2, #7 -> NestedWorkflow SaveAdc
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.BoardAdcData) => #8
        SubscribeSubject DataPath => #5
        StringProperty(Value=adc_) => #6
        ExternalizedPropertyOfArrayOfInt32SelectChannels Channels(MemberName=Channels, Value(int=0, int=1, int=3)) => #9
        #8, #9 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=3)) => #7
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #11
        #7, #11 -> Condition => #10
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #12
        #5, #6, #12 -> CombineLatest
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter AdcFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        #10, #2 -> Bonsai.Dsp.MatrixWriter(Path=Z:\mormyrid_data\20200813\adc_5, Suffix=None, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)

Bonsai.Windows.Input.KeyDown(Filter=None)
-> Condition => #17
    WorkflowInput Source1 => #0
    ExternalizedPropertyOfKeysEqualBuilder DValue(MemberName=Value, Value=D) => #3
    Source2=#0, Source2=#3 -> Equal(Operand=WorkflowPropertyOfKeys(Value=D)) => #2
    ExternalizedPropertyOfKeysEqualBuilder EValue(MemberName=Value, Value=E) => #4
    #0, #4 -> Equal(Operand=WorkflowPropertyOfKeys(Value=E)) => #6
    ExternalizedPropertyOfKeysEqualBuilder SValue(MemberName=Value, Value=S) => #5
    #0, #5 -> Equal(Operand=WorkflowPropertyOfKeys(Value=S)) => #7
    ExternalizedPropertyOfKeysEqualBuilder NValue(MemberName=Value, Value=N) => #11
    Source2=#0, Source2=#11 -> Equal(Operand=WorkflowPropertyOfKeys(Value=N)) => #10
    #6, #7, #2, #10 -> Zip
    -> BitwiseOr
    -> WorkflowOutput
ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #10
Source2=#10, Source2=#17 -> SelectMany ArduinoCommand
    WorkflowInput Source1 => #2
    ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #3
    #2, #3 -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
    -> WorkflowOutput
Bonsai.Scripting.PythonSource
  Script:
    from System import Random, TimeSpan
    random = Random()

    @returns(TimeSpan)
    def generate():
      yield TimeSpan.FromSeconds(random.NextDouble() * 60 + 5 * 60)
-> SelectMany RandomDelay => #20
    WorkflowInput Source1
    -> ExternalizedTimeSpanOfTimer DueTime(MemberName=DueTime, Value=PT0S)
    -> Timer(DueTime=PT5M1.064S, Period=PT0S)
    -> StringProperty(Value=T)
    -> WorkflowOutput
#10, #20 -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
-> Repeat
