WorkflowBuilder(Version=2.3.0)
StringProperty(Value=Z:\mormyrid_data\)
-> Bonsai.Scripting.PythonTransform
  Script:
    import time
    import os
    from datetime import date
    today = date.today()
    @returns(str)
    def process(value):
      sep="\\"
      month='{0:d}'.format(today.month)
      d='{:%Y%m%d}'.format(today)
      path=value+d+sep
      if not os.path.exists(path):
        os.mkdir(path)

      fname = path+'counter.txt'
      if not os.path.isfile(str(fname)):
        file= open(fname,'w')
        file.write(str(0))
        file.close()


      return path
-> ReplaySubject DataPath(BufferSize=nil)

ExternalizedPropertyOfBooleanBooleanProperty SaveEphys(MemberName=Save, Value=true) => #8
Bonsai.Windows.Input.KeyDown(Filter=None)
-> Condition => #17
    WorkflowInput Source1 => #0
    ExternalizedPropertyOfKeysEqualBuilder TValue(MemberName=Value, Value=T) => #3
    Source2=#0, Source2=#3 -> Equal(Operand=WorkflowPropertyOfKeys(Value=T)) => #2
    ExternalizedPropertyOfKeysEqualBuilder LValue(MemberName=Value, Value=L) => #4
    #0, #4 -> Equal(Operand=WorkflowPropertyOfKeys(Value=L)) => #6
    ExternalizedPropertyOfKeysEqualBuilder RValue(MemberName=Value, Value=R) => #5
    #0, #5 -> Equal(Operand=WorkflowPropertyOfKeys(Value=R)) => #7
    ExternalizedPropertyOfKeysEqualBuilder DValue(MemberName=Value, Value=D) => #11
    Source2=#0, Source2=#11 -> Equal(Operand=WorkflowPropertyOfKeys(Value=D)) => #10
    ExternalizedPropertyOfKeysEqualBuilder NValue(MemberName=Value, Value=N) => #13
    Source2=#0, Source2=#13 -> Equal(Operand=WorkflowPropertyOfKeys(Value=N)) => #12
    #6, #7, #2, #10, #12 -> Zip
    -> BitwiseOr
    -> WorkflowOutput
ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #10
Source2=#10, Source2=#17 -> SelectMany ArduinoCommand
    WorkflowInput Source1 => #2
    ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #3
    #2, #3 -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
    -> WorkflowOutput
ExternalizedTimeSpanOfExternalizedTimeSpanOfTimeSpanWindow SegmentInterval(MemberName=Value, Value=PT30M) => #11
-> ExternalizedPropertyOfNullableOfTimeSpanTimeSpanWindow EphysTimeShift(MemberName=TimeShift, Value="") => #13
#11 -> ExternalizedTimeSpanOfTimeSpanWindow EphysTimeSpan(MemberName=TimeSpan, Value=PT30M) => #16
#11 -> ExternalizedTimeSpanOfTimeSpanWindow VideoTimeSpan(MemberName=TimeSpan, Value=PT30M) => #22
#11 -> ExternalizedPropertyOfNullableOfTimeSpanTimeSpanWindow VideoTimeShift(MemberName=TimeShift, Value="") => #23
#11 -> ExternalizedPropertyOfNullableOfTimeSpanTimeSpanWindow NITimeShift(MemberName=TimeShift, Value="") => #29
#11 -> ExternalizedTimeSpanOfTimeSpanWindow NITimeSpan(MemberName=TimeSpan, Value=PT30M) => #33
ExternalizedPropertyOfBooleanBooleanProperty SaveVideo(MemberName=Save, Value=true) => #12
Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Bgr, ColorProcessing=Default) => #15
#15, #22, #23 -> TimeSpanWindow(TimeSpan=PT30M, TimeShift=PT30M) => #14
#14, #12, #10 -> SelectMany PeriodicVideo => #4
    WorkflowInput Source1 => #10
    -> MemberSelector(Selector=Source.Image) => #8
    -> MemberSelector(Selector=Source.Size)
    -> Take(Count=1)
    -> ReplaySubject FrameSize(BufferSize=nil)
    ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #13
    #10, #13 -> NestedWorkflow SaveVideoTS
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.Metadata.embeddedFrameCounter) => #12
        -> Skip(Count=1) => #9
        #9, #12 -> Zip
        -> Subtract => #5
        #0 -> MemberSelector(Selector=Source.Metadata.embeddedTimeStamp) => #13
        #13, #5 -> Zip => #3
        -> WorkflowOutput
        SubscribeSubject DataPath => #10
        StringProperty(Value=videoTS_) => #11
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #15
        #3, #15 -> Condition => #14
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #16
        #10, #11, #16 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter VideoTSFile(MemberName=FileName, Value=C:\Users\Ephys\iCloudDrive\Documents\Mormyrid_Data\Data\frame_data_.csv) => #4
        #4, #14 -> Bonsai.IO.CsvWriter(FileName=Z:\mormyrid_data\20190508\videoTS_0, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Source.Item1,Source.Item2")
    -> MemberSelector(Selector=Source.Item2)
    #13, #10 -> NestedWorkflow SaveVideoSyncTS
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.Metadata.embeddedTimeStamp) => #4
        #0 -> MemberSelector(Selector=Source.Image)
        -> Bonsai.Vision.Grayscale => #11
        SubscribeSubject DataPath => #9
        StringProperty(Value=video_syncTS) => #10
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #14
        ExternalizedPropertyOfDoubleRoiActivityDetected LEDThreshold(MemberName=Threshold, Value=100000) => #15
        #11, #15 -> NestedWorkflow DetectLEDs
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=1201, Y=1053), Point(X=1223, Y=1071), Point(X=1224, Y=1103), Point(X=1198, Y=1104)))) => #7
            ExternalizedPropertyOfDoubleRoiActivityDetected Threshold(MemberName=Threshold, Value=100000) => #8
            #7, #8 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=100000) => #2
            -> Skip(Count=1) => #1
            #2 -> BitwiseNot => #6
            #6, #1 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #5 -> Sample => #2
        #2, #14 -> Condition => #13
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> WorkflowOutput
        SubscribeSubject FileNum => #16
        #9, #10, #16 -> Zip
        -> Add => #6
        #6, #13 -> CombineLatest => #3
        Source2=#3 -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              fname=value.Item1
              file= open(fname,'a')
              file.write(str(value.Item2)+'\n')
              file.close()
              return True
    #8, #13 -> Condition => #14
        WorkflowInput Source1

        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #19
    #8, #19 -> NestedWorkflow Fishtracker => #6
        IntProperty(Value=5)
        -> ExternalizedPropertyOfInt32ElementCountWindow Count(MemberName=Count, Value=5) => #10
        WorkflowInput Source1
        -> Bonsai.Vision.MaskPolygon
          Regions
            ArrayOfPoint(Point(X=1025, Y=1168), Point(X=1222, Y=679), Point(X=1233, Y=41), Point(X=29, Y=1179))
            ArrayOfPoint(Point(X=11, Y=29), Point(X=1233, Y=40), Point(X=50, Y=1159), Point(X=4, Y=1169))
          MaskType=ToZero
          FillValue(Val0=128, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=250, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #11
        -> MemberSelector(Selector=Source.Centroid) => #1
        #11 -> MemberSelector(Selector=Source.Orientation) => #9
        #9, #10 -> ElementCountWindow(Count=5, Skip=1)
        -> SelectMany MedianFlter => #7
            WorkflowInput Source1
            -> ToList
            -> Bonsai.Scripting.PythonTransform FindMedian
              Script:
                @returns(float)
                def process(value):
                  if(len(value)==0):
                    return 0
                  sort = sorted(value)
                  return sort[len(sort)/2]
            -> WorkflowOutput
        -> Skip(Count=1) => #6
        #7, #6 -> Zip
        -> Bonsai.Scripting.PythonTransform DetectJumps => #4
          Script:
            import math

            @returns(float)
            def process(value):
              if ((value.Item2-value.Item1)>2): ## jumped up
                return -(math.pi)
              else:
                if ((value.Item2-value.Item1)<-2): ## jumped down
                  return math.pi
                else:
                  return 0
        ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #19
        #4, #19 -> Scan RunningAngle => #3
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Source.Value) => #2
            #0 -> MemberSelector(Selector=Source.Accumulation) => #3
            #2, #3 -> Zip
            -> Add
            -> Bonsai.Scripting.PythonTransform DetectFullCircle => #7
              Script:
                import math
                from System import Tuple

                @returns(Tuple[float,str])
                def process(value):
                  if (value>(2*math.pi)): ## whole circle left
                    return Tuple[float,str](value-2*math.pi,"L")
                  else:
                    if (value<(-2*math.pi)): ## whole circle right
                      return Tuple[float,str](value+2*math.pi,"R")
                    else:
                      return Tuple[float,str](value,"")
            -> MemberSelector(Selector=Source.Item1)
            -> WorkflowOutput
            #7 -> MemberSelector(Selector=Source.Item2)
            -> Condition => #9
                WorkflowInput Source1 => #0
                -> Equal(Operand=StringProperty(Value=L)) => #2
                #0 -> Equal(Operand=StringProperty(Value=R)) => #4
                #4, #2 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            ExternalizedPropertyOfStringSerialStringWrite PortName(MemberName=PortName, Value=COM4) => #11
            #9, #11 -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
        #3, #6 -> Zip
        -> Add => #0
        #0, #1 -> Zip
        -> WorkflowOutput
    -> NestedWorkflow SaveTracking
        WorkflowInput Source1 => #0
        SubscribeSubject DataPath => #6
        StringProperty(Value=tracking_) => #7
        SubscribeSubject FileNum => #8
        #6, #7, #8 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter TrackingFile(MemberName=FileName, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\tracking_data_.csv) => #3
        #3, #0 -> Bonsai.IO.CsvWriter
          FileName=Z:\mormyrid_data\20190508\tracking_0
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
          Selector="Source.Item1,Source.Item2.X,Source.Item2.Y"
        -> WorkflowOutput
    #6 -> MemberSelector(Selector=Source.Item2) => #12
    SubscribeSubject FileNum => #25
    StringProperty(Value=\\.\pipe\video_all) => #26
    #26, #25 -> CombineLatest
    -> Add
    -> ExternalizedPropertyOfStringImageWriter Path(MemberName=Path, Value=\\.\pipe\video_all0) => #16
    #14, #16 -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video_all0, Suffix=None, Overwrite=false)
    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr) => #31
    #31, #12 -> Zip
    -> WorkflowOutput

    SubscribeSubject FrameSize => #11
    Timer(DueTime=PT2S, Period=PT0S) => #18
    #11, #18 -> SubscribeWhen => #17
    SubscribeSubject DataPath => #20
    #17, #20 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform SaveCroppedVideo
      Script:
        import datetime
        import time
        from datetime import date
        from shutil import copyfile
        import os
        import clr
        clr.AddReference("Bonsai.System")
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from Bonsai.IO import PathHelper, PathSuffix
        pipename = r'\\.\pipe\video_all'
        dayone = date.today()
        #trackpath = r'Z:\mormyrid_data\TrackingVideos'

        def process(value):
          file = open(value.Item2+'counter.txt','r')
        #  num=str(int(file.read())-1)
          num = file.read()
          file.close()

        #  if int(num)>0:
        #    pnum=str(int(num)-1)
        #    fname = value.Item2 +'video_' + pnum + '.avi'
        #    cfname= trackpath + r'\video_' + pnum + '.avi'
        #    copyfile(fname,cfname)

          fname = value.Item2 +'video_' + num + '.avi'
        #  cfname= trackpath + r'\video_' + num + '.avi'

          pipe=pipename + num

          num = str(int(num)+1)
          file = open(value.Item2 + 'counter.txt','w')
          file.write(num)
          file.close()
          inrate=50
          outrate=inrate
          brate="3M"
          width = value.Item1.Width
          height =value.Item1.Height
          os.system(str.format(r'ffmpeg -f rawvideo -vcodec rawvideo -y -s {0}x{1} -r {2} -pix_fmt gray -i {3} -vcodec mpeg4 -pix_fmt yuv420p -vb {4} -r {5} {6}',width,height,inrate,pipe,brate,outrate,fname))

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)
Bonsai.Scripting.PythonSource
  Script:
    from System import Random, TimeSpan
    random = Random()

    @returns(TimeSpan)
    def generate():
      yield TimeSpan.FromSeconds(random.NextDouble() * 5 + 5)
-> SelectMany RandomDelay => #20
    WorkflowInput Source1
    -> ExternalizedTimeSpanOfTimer DueTime(MemberName=DueTime, Value=PT0S)
    -> Timer(DueTime=PT6.991S, Period=PT0S)
    -> StringProperty(Value=B)
    -> WorkflowOutput
#10, #20 -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
-> Repeat
ExternalizedPropertyOfAmplifierSampleRateRhd2000EvalBoard SampleRate(MemberName=SampleRate, Value=SampleRate30000Hz)
-> Bonsai.Ephys.Rhd2000EvalBoard => #1
  BitFileName=rhd2000_usb3.bit
  SampleRate=SampleRate30000Hz
  FastSettle=false
  LowerBandwidth=10
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=false
  CableDelayA=nil
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
#1, #16, #13 -> TimeSpanWindow(TimeSpan=PT30M, TimeShift=PT30M) => #5
#5, #8 -> SelectMany PeriodicEphys => #3
    WorkflowInput Source1 => #5
    -> NestedWorkflow EvokedAdc
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.BoardAdcData) => #11
        #0 -> MemberSelector(Selector=Source.BoardAdcData) => #14
        ExternalizedPropertyOfInt32TriggeredBuffer Windowsamples(MemberName=Count, Value=120) => #4
        ExternalizedPropertyOfInt32Delay Presamples(MemberName=Count, Value=60) => #8
        ExternalizedPropertyOfDoubleThreshold Threshold(MemberName=ThresholdValue, Value=0.1) => #10
        ExternalizedPropertyOfArrayOfInt32SelectChannels DataChannels(MemberName=Channels, Value(int=0)) => #12
        #11, #12 -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #16
        #16, #8 -> Bonsai.Dsp.Delay(Count=60) => #5
        ExternalizedPropertyOfArrayOfInt32SelectChannels TriggerChannel(MemberName=Channels, Value(int=0)) => #15
        #14, #15 -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc)
        -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=8000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #9
        #9, #10 -> Bonsai.Dsp.Threshold(ThresholdValue=0.1, MaxValue=1, ThresholdType=Binary) => #6
        #5, #6 -> Zip => #3
        #3, #4 -> Bonsai.Dsp.TriggeredBuffer(Count=120)
        -> WorkflowOutput
    #5 -> NestedWorkflow EODTrig
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.BoardAdcData) => #7
        ExternalizedPropertyOfDoubleThreshold Threshold(MemberName=ThresholdValue, Value=0.1) => #4
        ExternalizedPropertyOfArrayOfInt32SelectChannels TriggerChannel(MemberName=Channels, Value(int=0)) => #8
        #7, #8 -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc)
        -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=8000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #3
        #3, #4 -> Bonsai.Dsp.Threshold(ThresholdValue=0.1, MaxValue=1, ThresholdType=Binary)
        -> Bonsai.Dsp.Extrema
        -> MemberSelector(Selector=Source.MaxValue)
        -> WorkflowOutput
    -> WorkflowOutput
    ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #6
    #5, #6 -> NestedWorkflow SaveAdc
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.BoardAdcData) => #8
        SubscribeSubject DataPath => #5
        StringProperty(Value=adc_) => #6
        ExternalizedPropertyOfArrayOfInt32SelectChannels Channels(MemberName=Channels, Value(int=0, int=1, int=2)) => #9
        #8, #9 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2)) => #7
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #11
        #7, #11 -> Condition => #10
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #12
        #5, #6, #12 -> CombineLatest
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter AdcFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        #10, #2 -> Bonsai.Dsp.MatrixWriter(Path=Z:\mormyrid_data\20190508\adc_0, Suffix=None, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput
    #5, #6 -> NestedWorkflow SaveEphysTS
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.Timestamp)
        -> MemberSelector(Selector=Source.Data) => #3
        SubscribeSubject DataPath => #8
        StringProperty(Value=ephysTS_) => #9
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #11
        #3, #11 -> Condition => #10
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #12
        #8, #9, #12 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringTextWriter EphysTSFile(MemberName=FileName, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\ephys_timestamp_) => #4
        #10, #4 -> Bonsai.IO.TextWriter(FileName=Z:\mormyrid_data\20190508\ephysTS_0, Suffix=None, Buffered=true, Overwrite=false, Append=false)
        -> WorkflowOutput
    #5, #6 -> NestedWorkflow SaveAux
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.AuxiliaryData)
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2)) => #8
        SubscribeSubject DataPath => #6
        StringProperty(Value=aux_) => #7
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #11
        #8, #11 -> Condition => #10
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #12
        #6, #7, #12 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter AuxFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        #10, #2 -> Bonsai.Dsp.MatrixWriter(Path=Z:\mormyrid_data\20190508\aux_0, Suffix=None, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput
    #5, #6 -> NestedWorkflow SavePulses
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.BoardAdcData) => #8
        SubscribeSubject DataPath => #6
        StringProperty(Value=pulses_) => #7
        ExternalizedPropertyOfDoubleExternalizedPropertyOfDoubleFrequencyFilter InputSampleRate(MemberName=InputSampleRate, Value=30000) => #9
        ExternalizedPropertyOfDoubleThreshold SquelchThreshold(MemberName=SquelchThreshold, Value=20) => #10
        ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=0.1, double=0.5, double=0.5)) => #11
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #12
        SubscribeSubject FileNum => #13
        #6, #7, #13 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter PulsesFile(MemberName=FileName, Value=C:\Users\Ephys\iCloudDrive\Documents\Mormyrid_Data\Data\20171201\EOD_data.csv) => #2
        #8, #2, #9, #10, #11, #12 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #36
            -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #20
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #15
            #20, #15 -> Zip
            -> Add => #19
            #36 -> Bonsai.Dsp.SelectChannels(Channels(int=0)) => #24
            #36 -> Bonsai.Dsp.SelectChannels(Channels(int=2)) => #27
            ExternalizedPropertyOfDoubleFrequencyFilter Cutoff_HPF(MemberName=Cutoff1, Value=500) => #10
            ExternalizedPropertyOfDoubleExternalizedPropertyOfDoubleFrequencyFilter InputSampleRate(MemberName=Value, Value=30000) => #16
            -> ExternalizedPropertyOfDoubleFrequencyFilter FilterSampleRate(MemberName=SamplingFrequency, Value=30000) => #9
            #24, #9, #10 -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=30000, Cutoff1=500, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #7
            #16 -> ExternalizedPropertyOfInt32AudioPlayback AudioSampleRate(MemberName=Frequency, Value=30000)
            #16 -> ExternalizedPropertyOfDoubleDoubleProperty RateSampleRate(MemberName=InputSampleRate, Value=30000) => #38
            ExternalizedPropertyOfDoubleThreshold SquelchThreshold(MemberName=ThresholdValue, Value=20) => #17
            #7, #17 -> Bonsai.Dsp.Threshold(ThresholdValue=20, MaxValue=1, ThresholdType=ToZero)
            ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName, Value=Z:\mormyrid_data\20190508\pulses_0) => #22
            ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=0.1, double=0.5, double=0.5)) => #23
            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #26
            ExternalizedPropertyOfDoubleFrequencyFilter Cutoff_LPF(MemberName=Cutoff1, Value=50) => #35
            #27, #9, #35 -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=30000, Cutoff1=50, Cutoff2=0, KernelLength=60, FilterType=LowPass)
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=BinaryInv)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #31
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #30
            #31, #30 -> Zip
            -> Add => #28
            #7, #19, #28 -> Zip
            -> Bonsai.Dsp.Concat(Axis=0) => #5
            #5, #23 -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.1, double=0.5, double=0.5), WaveformRefinement=None) => #4
            -> WorkflowOutput
            #4 -> Condition => #3
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #2
                WorkflowInput Source1
                -> Concat => #2
                -> MemberSelector(Selector=Source.SampleIndex) => #1
                #2 -> MemberSelector(Selector=Source.ChannelIndex) => #3
                #3, #1 -> Zip
                -> WorkflowOutput
            #2, #26 -> Condition => #25
                WorkflowInput Source1

                ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            Source2=#22, Source2=#25 -> Bonsai.IO.CsvWriter(FileName=Z:\mormyrid_data\20190508\pulses_0, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false, Selector=Source)
            #3, #38 -> NestedWorkflow "EOD rate"
                ExternalizedPropertyOfDoubleDoubleProperty InputSampleRate(MemberName=Value, Value=30000)
                -> DoubleProperty(Value=30000) => #3
                WorkflowInput Source1
                -> SelectMany "EOD index" => #7
                    WorkflowInput Source1
                    -> Concat
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Source.ChannelIndex)
                        -> Equal(Operand=IntProperty(Value=0))
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Source.SampleIndex)
                    -> WorkflowOutput
                -> Skip(Count=1) => #6
                #6, #7 -> Zip
                -> Subtract => #4
                #3, #4 -> CombineLatest
                -> Divide
                -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedPropertyOfArrayOfInt32ExternalizedPropertyOfArrayOfInt32SelectChannels new_HS(MemberName=Value, Value(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25))
    -> ExternalizedPropertyOfArrayOfInt32SelectChannels "Headstage Channels" => #11
      MemberName="Headstage Channels"
      Value(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)
    ExternalizedPropertyOfArrayOfInt32ExternalizedPropertyOfArrayOfInt32SelectChannels implant(MemberName=Value, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15))
    -> ExternalizedPropertyOfArrayOfInt32SelectChannels DataChannels(MemberName=DataChannels, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15)) => #15
    #5, #11, #15 -> NestedWorkflow EvokedResponse
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.AmplifierData) => #11
        #0 -> MemberSelector(Selector=Source.BoardAdcData) => #14
        ExternalizedPropertyOfInt32TriggeredBuffer Windowsamples(MemberName=Count, Value=500) => #4
        ExternalizedPropertyOfInt32Delay Presamples(MemberName=Count, Value=0) => #8
        ExternalizedPropertyOfDoubleThreshold Threshold(MemberName=ThresholdValue, Value=0.1) => #10
        ExternalizedPropertyOfArrayOfInt32SelectChannels DataChannels(MemberName=Channels, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15)) => #12
        ExternalizedPropertyOfArrayOfInt32SelectChannels TriggerChannel(MemberName=Channels, Value(int=0)) => #15
        #14, #15 -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc)
        -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=8000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #9
        #9, #10 -> Bonsai.Dsp.Threshold(ThresholdValue=0.1, MaxValue=1, ThresholdType=Binary) => #6
        ExternalizedPropertyOfArrayOfInt32SelectChannels "Headstage Channels"(MemberName=Channels, Value(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #17
        #11, #17 -> Bonsai.Dsp.SelectChannels(Channels(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #16
        #16, #12 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15))
        -> Bonsai.Ephys.AdcScale(AdcType=Electrode) => #18
        #18, #8 -> Bonsai.Dsp.Delay(Count=0) => #5
        #5, #6 -> Zip => #3
        #3, #4 -> Bonsai.Dsp.TriggeredBuffer(Count=500)
        -> WorkflowOutput
    #5, #6, #11, #15 -> NestedWorkflow SaveAmp
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.AmplifierData) => #9
        SubscribeSubject DataPath => #6
        StringProperty(Value=amp_) => #7
        ExternalizedPropertyOfArrayOfInt32SelectChannels DataChannels(MemberName=Channels, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15)) => #10
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #12
        ExternalizedPropertyOfArrayOfInt32SelectChannels "Headstage Channels"(MemberName=Channels, Value(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #14
        Source2=#9, Source2=#14 -> Bonsai.Dsp.SelectChannels(Channels(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #13
        #10, #13 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15)) => #8
        #8, #12 -> Condition => #11
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #15
        #6, #7, #15 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter AmpFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        #11, #2 -> Bonsai.Dsp.MatrixWriter(Path=Z:\mormyrid_data\20190508\amp_0, Suffix=None, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)

    ExternalizedPropertyOfArrayOfInt32ExternalizedPropertyOfArrayOfInt32SelectChannels old_HS(MemberName=Value, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=24, int=25, int=26, int=27, int=28, int=29, int=30, int=31))
    ExternalizedPropertyOfArrayOfInt32ExternalizedPropertyOfArrayOfInt32SelectChannels full(MemberName=Value, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15))
#4, #3 -> CombineLatest
-> Bonsai.Scripting.PythonTransform
  Script:
    import clr
    import math
    import System
    clr.AddReference("OpenCV.Net")
    from OpenCV.Net import *

    startcolor = Scalar.Rgb(255,0,0)
    endcolor = Scalar.Rgb(0,0,255)
    thickness = -1
    maxpoints = 1000
    Radius=3
    points = []

    def interpolate(x,target,step):
      return x + step * (target - x)

    @returns(IplImage)
    def process(value):
      output = value.Item1.Item1.Clone()
      # Convert GRAY to BGR
      centroid = value.Item1.Item2
      trig = value.Item2

      # Add point to circular buffer
      if trig>0:
        points.insert(0,centroid)

    #  while len(points) > maxpoints:
    #    points.pop()

      # Draw all point pairs in buffer
      for i,p1 in enumerate(points):
        if math.isnan(p1.X):
          continue

        step = i / float(maxpoints)
        b = interpolate(startcolor.Val0,endcolor.Val0,step)
        g = interpolate(startcolor.Val1,endcolor.Val1,step)
        r = interpolate(startcolor.Val2,endcolor.Val2,step)
        CV.Circle(output,Point(p1),Radius,Scalar.Rgb(r,g,b),thickness)

      return output
ExternalizedPropertyOfDoubleAnalogInput NISampleRate(MemberName=SampleRate, Value=100000)
-> Bonsai.NationalInstruments.AnalogInput => #27
  SignalSource=""
  SampleRate=100000
  ActiveEdge=Rising
  QuantityMode=ContinuousSamples
  BufferSize=1000
  SamplesPerRead=-1
  Channels
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=cDAQ1Mod2/ai1, TerminalConfiguration=Rse, VoltageUnits=Volts)
#27, #33, #29 -> TimeSpanWindow(TimeSpan=PT30M, TimeShift=PT30M) => #31
ExternalizedPropertyOfBooleanBooleanProperty SaveNI(MemberName=Save, Value=true) => #30
#31, #30 -> SelectMany PeriodicNI
    WorkflowInput Source1 => #2
    -> NestedWorkflow EvokedResponse
        WorkflowInput Source1 => #0
        -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
        -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=100000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #7
        ExternalizedPropertyOfInt32TriggeredBuffer Windowsamples(MemberName=Count, Value=500) => #4
        ExternalizedPropertyOfInt32Delay Presamples(MemberName=Count, Value=0) => #6
        #6, #0 -> Bonsai.Dsp.Delay(Count=0) => #5
        ExternalizedPropertyOfDoubleThreshold Threshold(MemberName=ThresholdValue, Value=0.1) => #8
        #7, #8 -> Bonsai.Dsp.Threshold(ThresholdValue=0.1, MaxValue=1, ThresholdType=Binary) => #10
        #5, #10 -> Zip => #3
        #3, #4 -> Bonsai.Dsp.TriggeredBuffer(Count=500)
        -> WorkflowOutput
    -> WorkflowOutput
    ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #6
    #2, #6 -> NestedWorkflow SaveNI
        WorkflowInput Source1 => #0
        SubscribeSubject DataPath => #6
        StringProperty(Value=ni_) => #7
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #9
        #0, #9 -> Condition => #8
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject FileNum => #10
        #6, #7, #10 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter NIFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        #8, #2 -> Bonsai.Dsp.MatrixWriter(Path=Z:\mormyrid_data\20190508\ni_0, Suffix=None, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput
    #2, #6 -> NestedWorkflow SavePulses
        WorkflowInput Source1 => #0
        SubscribeSubject DataPath => #6
        StringProperty(Value=NIpulses_) => #7
        ExternalizedPropertyOfDoubleFrequencyFilter SamplingFrequency(MemberName=SamplingFrequency, Value=30000) => #8
        ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=0.1)) => #9
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #10
        SubscribeSubject FileNum => #11
        #6, #7, #11 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter PulsesFile(MemberName=FileName, Value=C:\Users\Ephys\iCloudDrive\Documents\Mormyrid_Data\Data\20171201\EOD_data.csv) => #2
        #0, #2, #9, #10, #8 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0) => #9
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #16
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #14
            #16, #14 -> Zip
            -> Add => #15
            #9 -> Bonsai.Dsp.SelectChannels(Channels(int=0)) => #20
            ExternalizedPropertyOfDoubleFrequencyFilter Cutoff_HPF(MemberName=Cutoff1, Value=500) => #10
            ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName, Value=Z:\mormyrid_data\20190508\NIpulses_0) => #18
            ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=0.1)) => #19
            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=true) => #22
            ExternalizedPropertyOfDoubleFrequencyFilter SamplingFrequency(MemberName=SamplingFrequency, Value=30000) => #23
            #20, #10, #23 -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=30000, Cutoff1=500, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #7
            #7, #15 -> Zip
            -> Bonsai.Dsp.Concat(Axis=0) => #5
            #5, #19 -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.1), WaveformRefinement=None) => #4
            -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #2
                WorkflowInput Source1
                -> Concat => #2
                -> MemberSelector(Selector=Source.SampleIndex) => #1
                #2 -> MemberSelector(Selector=Source.ChannelIndex) => #3
                #3, #1 -> Zip
                -> WorkflowOutput
            #2, #22 -> Condition => #21
                WorkflowInput Source1

                ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=true)
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            Source2=#18, Source2=#21 -> Bonsai.IO.CsvWriter(FileName=Z:\mormyrid_data\20190508\NIpulses_0, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false, Selector=Source)
        -> WorkflowOutput

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)
