WorkflowBuilder(Version=2.6.2)
StringProperty(Value=Z:\home\aw3057\mormyrid_data\)
-> Bonsai.Scripting.PythonTransform
  Script:
    import time
    import os
    from datetime import date
    today = date.today()
    @returns(str)
    def process(value):
      sep="\\"
      month='{0:d}'.format(today.month)
      d='{:%Y%m%d}'.format(today)
      path=value+d+sep
      if not os.path.exists(path):
        os.mkdir(path)

      fname = path+'counter.txt'
      if not os.path.isfile(str(fname)):
        file= open(fname,'w')
        file.write(str(0))
        file.close()


      return path
-> ReplaySubject DataPath(BufferSize=nil)

Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #3
ExternalizedMapping(TimeShift(DisplayName=VideoTimeShift)) => #4
ExternalizedMapping(TimeSpan(DisplayName=VideoTimeSpan)) => #5
#3, #5, #4 -> TimeSpanWindow(TimeSpan=PT20M, TimeShift=PT20M)
-> SelectMany PeriodicVideo => #7
    WorkflowInput Source1 => #0
    StringProperty(Value=\\.\pipe\video_all) => #1
    SubscribeSubject FileNum => #2
    #1, #2 -> CombineLatest
    -> Add
    -> PropertyMapping(Path) => #5
    ExternalizedMapping(Save) => #6
    #0, #6 -> NestedWorkflow SaveVideoSync => #7
        SubscribeSubject DataPath => #0
        StringProperty(Value=video_syncTS) => #1
        SubscribeSubject FileNum => #2
        #0, #1, #2 -> Zip
        -> Add => #4
        WorkflowInput Source1 => #5
        -> MemberSelector(Selector=Metadata.embeddedTimeStamp) => #6
        #5 -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Grayscale => #8
        ExternalizedMapping(Threshold(DisplayName=LEDThreshold)) => #9
        #8, #9 -> NestedWorkflow DetectLEDs
            WorkflowInput Source1
            -> Bonsai.Vision.Threshold(ThresholdValue=254, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=5, Y=938), Point(X=154, Y=921), Point(X=163, Y=1174), Point(X=0, Y=1162))), Operation=Sum) => #2
            ExternalizedMapping(Threshold) => #3
            #2, #3 -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=5000) => #4
            -> BitwiseNot => #5
            #4 -> Skip(Count=1) => #6
            #5, #6 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> Condition => #11
            WorkflowInput Source1
            -> WorkflowOutput
        #6, #11 -> Sample => #12
        ExternalizedMapping(Save) => #13
        #12, #13 -> Condition => #14
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #4, #14 -> CombineLatest
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              fname=value.Item1
              file= open(fname,'a')
              file.write(str(value.Item2)+'\n')
              file.close()
              return True
        #14 -> WorkflowOutput
    #0, #6 -> NestedWorkflow SaveVideoTS
        SubscribeSubject DataPath => #0
        SubscribeSubject FileNum => #1
        StringProperty(Value=videoTS_) => #2
        #0, #2, #1 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        -> MemberSelector(Selector=Metadata.embeddedTimeStamp) => #7
        #6 -> MemberSelector(Selector=Metadata.embeddedFrameCounter) => #8
        -> Skip(Count=1) => #9
        #9, #8 -> Zip
        -> Subtract => #11
        #7, #11 -> Zip => #12
        ExternalizedMapping(Save) => #13
        #12, #13 -> Condition => #14
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #5, #14 -> Bonsai.IO.CsvWriter(FileName=Z:\home\aw3057\mormyrid_data\20230510\videoTS_41, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Item1,Item2")
        #12 -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    #0 -> MemberSelector(Selector=Image) => #10
    -> MemberSelector(Selector=Size)
    -> Take(Count=1)
    -> ReplaySubject FrameSize(BufferSize=nil)
    #10, #6 -> Condition => #14
        WorkflowInput Source1

        ExternalizedMapping(Value(DisplayName=Save))
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    #14, #5 -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video_all41, Suffix=None, Overwrite=false)
    #7, #10 -> CombineLatest
    -> WorkflowOutput

    SubscribeSubject FrameSize => #18
    Timer(DueTime=PT2S, Period=PT0S) => #19
    #18, #19 -> SubscribeWhen => #20
    SubscribeSubject DataPath => #21
    #20, #21 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform SaveCroppedVideo
      Script:
        import datetime
        import time
        from datetime import date
        from shutil import copyfile
        import os
        import clr
        clr.AddReference("Bonsai.System")
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from Bonsai.IO import PathHelper, PathSuffix
        pipename = r'\\.\pipe\video_all'
        dayone = date.today()
        #trackpath = r'Z:\mormyrid_data\TrackingVideos'

        def process(value):
          file = open(value.Item2+'counter.txt','r')
        #  num=str(int(file.read())-1)
          num = file.read()
          file.close()

        #  if int(num)>0:
        #    pnum=str(int(num)-1)
        #    fname = value.Item2 +'video_' + pnum + '.avi'
        #    cfname= trackpath + r'\video_' + pnum + '.avi'
        #    copyfile(fname,cfname)

          fname = value.Item2 +'video_' + num + '.avi'
        #  cfname= trackpath + r'\video_' + num + '.avi'

          pipe=pipename + num

          num = str(int(num)+1)
          file = open(value.Item2 + 'counter.txt','w')
          file.write(num)
          file.close()
          inrate=50
          outrate=inrate
          brate="3M"
          width = value.Item1.Width
          height =value.Item1.Height
          os.system(str.format(r'ffmpeg -f rawvideo -vcodec rawvideo -y -s {0}x{1} -r {2} -pix_fmt gray -i {3} -vcodec mpeg4 -pix_fmt yuv420p -vb {4} -r {5} {6}',width,height,inrate,pipe,brate,outrate,fname))

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)
-> MemberSelector(Selector=Item2)
#7 -> MemberSelector(Selector=Item1)

ExternalizedMapping(TimeShift(DisplayName=EphysTimeShift)) => #10
ExternalizedMapping(TimeSpan(DisplayName=EphysTimeSpan)) => #11
ExternalizedMapping(SampleRate)
-> Bonsai.Ephys.Rhd2000EvalBoard => #13
  BitFileName="C:\Program Files\Open Ephys\rhd2000_usb3.bit"
  SampleRate=SampleRate30000Hz
  ExternalFastSettleEnabled=false
  LowerBandwidth=1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=false
  CableDelayA=nil
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
#13, #11, #10 -> TimeSpanWindow(TimeSpan=PT20M, TimeShift=PT20M)
-> SelectMany PeriodicEphys => #15
    WorkflowInput Source1 => #0
    ExternalizedMapping(Save) => #1
    #0, #1 -> NestedWorkflow SaveAdc
        WorkflowInput Source1
        -> MemberSelector(Selector=BoardAdcData) => #1
        ExternalizedMapping(Channels) => #2
        #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1)) => #3
        SubscribeSubject DataPath => #4
        StringProperty(Value=adc_) => #5
        SubscribeSubject FileNum => #6
        #4, #5, #6 -> CombineLatest
        -> Add
        -> PropertyMapping(Path) => #9
        ExternalizedMapping(Save) => #10
        #3, #10 -> Condition => #11
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #11, #9 -> Bonsai.Dsp.MatrixWriter(Path=Z:\home\aw3057\mormyrid_data\20230510\adc_41, Suffix=None, Overwrite=false, Layout=RowMajor)
        #3 -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SaveEphysTS
        WorkflowInput Source1
        -> MemberSelector(Selector=Timestamp)
        -> MemberSelector(Selector=Data) => #2
        ExternalizedMapping(Save) => #3
        #2, #3 -> Condition => #4
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject DataPath => #5
        StringProperty(Value=ephysTS_) => #6
        SubscribeSubject FileNum => #7
        #5, #6, #7 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #10
        #4, #10 -> Bonsai.IO.TextWriter(FileName=Z:\home\aw3057\mormyrid_data\20230510\ephysTS_41, Suffix=None, Buffered=true, Overwrite=false, Append=false)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SaveAux
        WorkflowInput Source1
        -> MemberSelector(Selector=AuxiliaryData)
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2)) => #2
        ExternalizedMapping(Save) => #3
        #2, #3 -> Condition => #4
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject DataPath => #5
        StringProperty(Value=aux_) => #6
        SubscribeSubject FileNum => #7
        #5, #6, #7 -> Zip
        -> Add
        -> PropertyMapping(Path) => #10
        #4, #10 -> Bonsai.Dsp.MatrixWriter(Path=Z:\home\aw3057\mormyrid_data\20230510\aux_41, Suffix=None, Overwrite=false, Layout=RowMajor)
        #2 -> Bonsai.Ephys.AdcScale(AdcType=AuxiliaryInput)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SavePulses => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=BoardAdcData) => #1
        SubscribeSubject DataPath => #2
        StringProperty(Value=pulses_) => #3
        SubscribeSubject FileNum => #4
        #2, #3, #4 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(InputSampleRate) => #8
        ExternalizedMapping(Threshold) => #9
        ExternalizedMapping(Save) => #10
        #1, #7, #8, #9, #10 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #1
            ExternalizedMapping(Channels(DisplayName=sync_chan)) => #2
            ExternalizedMapping(Channels(DisplayName=eod_chan)) => #3
            #1, #3 -> Bonsai.Dsp.SelectChannels(Channels(int=0)) => #4
            ExternalizedMapping(SampleRate(DisplayName=FilterSampleRate)) => #5
            ExternalizedMapping(Cutoff1(DisplayName=Cutoff_HPF)) => #6
            #4, #5, #6 -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=500, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #7
            #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #11
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #12
            #11, #12 -> Zip
            -> Add => #14
            ExternalizedMapping(Threshold) => #15
            ExternalizedMapping(FileName) => #16
            ExternalizedMapping(Save) => #17
            ExternalizedMapping(InputSampleRate) => #18
            ExternalizedMapping(Channels(DisplayName=light_channel)) => #19
            #1, #19 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=BinaryInv)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #23
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #24
            #23, #24 -> Zip
            -> Add => #26
            #14, #26, #7 -> Zip
            -> Bonsai.Dsp.Concat(Axis=0) => #28
            #28, #15 -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.5, double=0.5, double=0.1), WaveformRefinement=None) => #29
            -> Condition => #30
                WorkflowInput Source1
                -> MemberSelector(Selector=Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #31
                WorkflowInput Source1
                -> Concat => #1
                -> MemberSelector(Selector=ChannelIndex) => #2
                #1 -> MemberSelector(Selector=SampleIndex) => #3
                #2, #3 -> Zip
                -> WorkflowOutput
            #31, #17 -> Condition => #32
                WorkflowInput Source1

                ExternalizedMapping(Value(DisplayName=Save))
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #16, #32 -> Bonsai.IO.CsvWriter(FileName=Z:\home\aw3057\mormyrid_data\20230510\pulses_41, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)
            #30, #18 -> NestedWorkflow "EOD rate" => #34
                WorkflowInput Source1
                -> SelectMany "EOD index" => #1
                    WorkflowInput Source1
                    -> Concat
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChannelIndex)
                        -> Equal(Operand=IntProperty(Value=2))
                        -> WorkflowOutput
                    -> MemberSelector(Selector=SampleIndex)
                    -> WorkflowOutput
                -> Skip(Count=1) => #2
                #2, #1 -> Zip
                -> Subtract => #4
                ExternalizedMapping(Value(DisplayName=InputSampleRate))
                -> DoubleProperty(Value=30000) => #6
                #6, #4 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #29, #34 -> CombineLatest
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> NestedWorkflow EvokedAdc
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=BoardAdcData) => #1
        ExternalizedMapping(Channels(DisplayName=TriggerChannel)) => #2
        ExternalizedMapping(ThresholdValue(DisplayName=Threshold)) => #3
        ExternalizedMapping(Channels(DisplayName=DataChannels)) => #4
        #1, #4 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #6
        ExternalizedMapping(Count(DisplayName=Presamples)) => #7
        #6, #7 -> Bonsai.Dsp.Delay(Count=60) => #8
        #0 -> MemberSelector(Selector=BoardAdcData) => #9
        #9, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc)
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=8000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #12
        #12, #3 -> Bonsai.Dsp.Threshold(ThresholdValue=0.1, MaxValue=1, ThresholdType=Binary) => #13
        #8, #13 -> Zip => #14
        ExternalizedMapping(Count(DisplayName=Windowsamples)) => #15
        #14, #15 -> Bonsai.Dsp.TriggeredBuffer(Count=900)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SaveLightChange
        WorkflowInput Source1
        -> MemberSelector(Selector=BoardAdcData) => #1
        SubscribeSubject DataPath => #2
        StringProperty(Value=light) => #3
        #2, #3 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Save) => #7
        ExternalizedMapping(LightChan) => #8
        #1, #6, #7, #8 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #1
            ExternalizedMapping(Channels(DisplayName=LightChan)) => #2
            #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2.7, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=100, Cutoff2=0, KernelLength=60, FilterType=LowPass) => #5
            -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.5), WaveformRefinement=None) => #6
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #8
                WorkflowInput Source1
                -> Concat
                -> MemberSelector(Selector=SampleIndex) => #2
                SubscribeSubject FileNum => #3
                IntProperty(Value=1) => #4
                #3, #2, #4 -> CombineLatest
                -> WorkflowOutput
            ExternalizedMapping(Save) => #9
            #8, #9 -> Condition => #10
                WorkflowInput Source1

                ExternalizedMapping(Value(DisplayName=Save))
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #6 -> WorkflowOutput
            #5 -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=-1, Shift=1)
            -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.5), WaveformRefinement=None)
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #15
                WorkflowInput Source1
                -> Concat
                -> MemberSelector(Selector=SampleIndex) => #2
                SubscribeSubject FileNum => #3
                IntProperty(Value=0) => #4
                #3, #2, #4 -> CombineLatest
                -> WorkflowOutput
            #9, #15 -> Condition => #16
                WorkflowInput Source1

                ExternalizedMapping(Value(DisplayName=Save))
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #10, #16 -> Merge => #17
            ExternalizedMapping(FileName) => #18
            #18, #17 -> Bonsai.IO.CsvWriter(FileName=Z:\home\aw3057\mormyrid_data\20230510\light, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput
    #0 -> MemberSelector(Selector=AmplifierData) => #8
    ExternalizedMapping(Channels(DisplayName="Headstage Channels")) => #9
    #8, #9 -> Bonsai.Dsp.SelectChannels(Channels(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #10
    ExternalizedMapping(Channels(DisplayName=DataChannels)) => #11
    #10, #11 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15)) => #12
    #1, #12 -> NestedWorkflow SaveAmp
        WorkflowInput Source1 => #0
        -> Bonsai.Ephys.AdcScale(AdcType=Electrode)
        -> WorkflowOutput
        SubscribeSubject DataPath => #3
        StringProperty(Value=amp_) => #4
        SubscribeSubject FileNum => #5
        #3, #4, #5 -> Zip
        -> Add
        -> PropertyMapping(Path) => #8
        ExternalizedMapping(Save) => #9
        #9, #0 -> Condition => #10
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #10, #8 -> Bonsai.Dsp.MatrixWriter(Path=Z:\home\aw3057\mormyrid_data\20230510\amp_41, Suffix=None, Overwrite=false, Layout=RowMajor)
    #12 -> NestedWorkflow EvokedAmpSpikes => #14
        ExternalizedMapping(Channels(DisplayName=ampTriggerChannel)) => #0
        ExternalizedMapping(ThresholdValue(DisplayName=AmpThreshold)) => #1
        ExternalizedMapping(Count(DisplayName=Presamples)) => #2
        ExternalizedMapping(Count(DisplayName=Windowsamples)) => #3
        WorkflowInput Source1
        -> Bonsai.Ephys.AdcScale(AdcType=Electrode) => #5
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=300, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #6
        #2, #6 -> Bonsai.Dsp.Delay(Count=0) => #7
        #5, #0 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass)
        -> Bonsai.Dsp.Abs => #10
        #10, #1 -> Bonsai.Dsp.Threshold(ThresholdValue=1000, MaxValue=1, ThresholdType=Binary) => #11
        #7, #11 -> Zip => #12
        #12, #3 -> Bonsai.Dsp.TriggeredBuffer(Count=900) => #13
        -> WorkflowOutput
        #13 -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=200, Cutoff2=0, KernelLength=60, FilterType=HighPass)
    #12 -> NestedWorkflow EvokedAmpLFP => #15
        ExternalizedMapping(Channels(DisplayName=ampTriggerChannel)) => #0
        ExternalizedMapping(ThresholdValue(DisplayName=AmpThreshold)) => #1
        ExternalizedMapping(Count(DisplayName=Presamples)) => #2
        ExternalizedMapping(Count(DisplayName=Windowsamples)) => #3
        WorkflowInput Source1
        -> Bonsai.Ephys.AdcScale(AdcType=Electrode) => #5
        #5, #0 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass)
        -> Bonsai.Dsp.Abs => #8
        #8, #1 -> Bonsai.Dsp.Threshold(ThresholdValue=1000, MaxValue=1, ThresholdType=Binary) => #9
        #5 -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=10, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #10
        #5 -> Bonsai.Dsp.Delay(Count=30) => #11
        #11, #10 -> Zip
        -> Bonsai.Dsp.Concat(Axis=0) => #13
        #2, #13 -> Bonsai.Dsp.Delay(Count=60) => #14
        #14, #9 -> Zip => #15
        #15, #3 -> Bonsai.Dsp.TriggeredBuffer(Count=300) => #16
        -> WorkflowOutput
        #16 -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=200, Cutoff2=0, KernelLength=60, FilterType=HighPass)
    #5, #14, #15 -> CombineLatest
    -> WorkflowOutput
    #0 -> MemberSelector(Selector=BoardAdcData)

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)
-> MemberSelector(Selector=Item1.Item1)
#15 -> MemberSelector(Selector=Item1.Item2)
#15 -> MemberSelector(Selector=Item2)
#15 -> MemberSelector(Selector=Item3)
