WorkflowBuilder(Version=2.6.2)
StringProperty(Value=Z:\home\aw3057\mormyrid_data)
-> Bonsai.Scripting.PythonTransform
  Script:
    import time
    import os
    from datetime import date
    today = date.today()
    @returns(str)
    def process(value):
      sep="\\"
      month='{0:d}'.format(today.month)
      d='{:%Y%m%d}'.format(today)
      path=value+d+sep
      if not os.path.exists(path):
        os.mkdir(path)

      fname = path+'counter.txt'
      if not os.path.isfile(str(fname)):
        file= open(fname,'w')
        file.write(str(0))
        file.close()


      return path
-> ReplaySubject DataPath(BufferSize=nil)

Bonsai.Scripting.PythonSource
  Script:
    from System import Random, TimeSpan
    random = Random()

    @returns(TimeSpan)
    def generate():
      yield TimeSpan.FromSeconds(random.NextDouble() * 5 + 5)
-> SelectMany RandomDelay => #4
    WorkflowInput Source1
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT9.842S, Period=PT0S)
    -> StringProperty(Value=B)
    -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
-> Condition => #6
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value(DisplayName=LValue)) => #1
    #0, #1 -> Equal(Operand=WorkflowProperty<System.Windows.Forms.Keys>(Value=L)) => #2
    ExternalizedMapping(Value(DisplayName=RValue)) => #3
    #0, #3 -> Equal(Operand=WorkflowProperty<System.Windows.Forms.Keys>(Value=R)) => #4
    ExternalizedMapping(Value(DisplayName=TValue)) => #5
    #0, #5 -> Equal(Operand=WorkflowProperty<System.Windows.Forms.Keys>(Value=T)) => #6
    ExternalizedMapping(Value(DisplayName=DValue)) => #7
    #0, #7 -> Equal(Operand=WorkflowProperty<System.Windows.Forms.Keys>(Value=D)) => #8
    ExternalizedMapping(Value(DisplayName=NValue)) => #9
    #0, #9 -> Equal(Operand=WorkflowProperty<System.Windows.Forms.Keys>(Value=N)) => #10
    #2, #4, #6, #8, #10 -> Zip
    -> BitwiseOr
    -> WorkflowOutput
ExternalizedMapping(PortName) => #7
#7, #4 -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r\n)
-> Repeat
#6, #7 -> SelectMany ArduinoCommand
    WorkflowInput Source1 => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r\n)
    -> WorkflowOutput
Bonsai.PointGrey.FlyCapture(Index=1, ColorProcessing=Default) => #11
ExternalizedMapping(TimeShift(DisplayName=VideoTimeShift)) => #12
ExternalizedMapping(TimeSpan(DisplayName=VideoTimeSpan)) => #13
#11, #13, #12 -> TimeSpanWindow(TimeSpan=PT20M, TimeShift=PT20M) => #14
#14, #7 -> SelectMany PeriodicVideo
    WorkflowInput Source1 => #0
    StringProperty(Value=\\.\pipe\video_all) => #1
    SubscribeSubject FileNum => #2
    #1, #2 -> CombineLatest
    -> Add
    -> PropertyMapping(Path) => #5
    ExternalizedMapping(Save) => #6
    #0, #6 -> NestedWorkflow SaveVideoSync
        SubscribeSubject DataPath => #0
        StringProperty(Value=video_syncTS) => #1
        SubscribeSubject FileNum => #2
        #0, #1, #2 -> Zip
        -> Add => #4
        WorkflowInput Source1 => #5
        -> MemberSelector(Selector=Metadata.embeddedTimeStamp) => #6
        #5 -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Grayscale => #8
        ExternalizedMapping(Threshold(DisplayName=LEDThreshold)) => #9
        #8, #9 -> NestedWorkflow DetectLEDs
            WorkflowInput Source1
            -> Bonsai.Vision.Threshold(ThresholdValue=254, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=976, Y=1049), Point(X=896, Y=1049), Point(X=896, Y=1129), Point(X=976, Y=1129))), Operation=Sum) => #2
            ExternalizedMapping(Threshold) => #3
            #2, #3 -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=5000) => #4
            -> BitwiseNot => #5
            #4 -> Skip(Count=1) => #6
            #5, #6 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> Condition => #11
            WorkflowInput Source1
            -> WorkflowOutput
        #6, #11 -> Sample => #12
        ExternalizedMapping(Save) => #13
        #12, #13 -> Condition => #14
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #4, #14 -> CombineLatest
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              fname=value.Item1
              file= open(fname,'a')
              file.write(str(value.Item2)+'\n')
              file.close()
              return True
        #14 -> WorkflowOutput
    #0, #6 -> NestedWorkflow SaveVideoTS
        SubscribeSubject DataPath => #0
        SubscribeSubject FileNum => #1
        StringProperty(Value=videoTS_) => #2
        #0, #2, #1 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        -> MemberSelector(Selector=Metadata.embeddedTimeStamp) => #7
        #6 -> MemberSelector(Selector=Metadata.embeddedFrameCounter) => #8
        -> Skip(Count=1) => #9
        #9, #8 -> Zip
        -> Subtract => #11
        #7, #11 -> Zip => #12
        ExternalizedMapping(Save) => #13
        #12, #13 -> Condition => #14
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #5, #14 -> Bonsai.IO.CsvWriter(FileName=C:\mormyrid_data\20220124\videoTS_1, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Item1,Item2")
        #12 -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    #0 -> MemberSelector(Selector=Image) => #10
    ExternalizedMapping(PortName) => #11
    #10, #11 -> NestedWorkflow Fishtracker => #12
        WorkflowInput Source1
        -> Bonsai.Vision.MaskPolygon(MaskType=ToZero, FillValue(Val0=128, Val1=0, Val2=0, Val3=0))
        -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #5
        -> MemberSelector(Selector=Orientation) => #6
        IntProperty(Value=5)
        -> Disable PropertyMapping(Count(Selector=5)) => #8
        #6, #8 -> ElementCountWindow(Count=5, Skip=1)
        -> SelectMany MedianFlter => #10
            WorkflowInput Source1
            -> ToList
            -> Bonsai.Scripting.PythonTransform FindMedian
              Script:
                @returns(float)
                def process(value):
                  if(len(value)==0):
                    return 0
                  sort = sorted(value)
                  return sort[len(sort)/2]
            -> WorkflowOutput
        -> Skip(Count=1) => #11
        #10, #11 -> Zip
        -> Bonsai.Scripting.PythonTransform DetectJumps => #13
          Script:
            import math

            @returns(float)
            def process(value):
              if ((value.Item2-value.Item1)>2): ## jumped up
                return -(math.pi)
              else:
                if ((value.Item2-value.Item1)<-2): ## jumped down
                  return math.pi
                else:
                  return 0
        ExternalizedMapping(PortName) => #14
        #13, #14 -> Scan RunningAngle => #15
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            #0 -> MemberSelector(Selector=Accumulation) => #2
            #1, #2 -> Zip
            -> Add
            -> Bonsai.Scripting.PythonTransform DetectFullCircle => #5
              Script:
                import math
                from System import Tuple

                @returns(Tuple[float,str])
                def process(value):
                  if (value>(2*math.pi)): ## whole circle left
                    return Tuple[float,str](value-2*math.pi,"L")
                  else:
                    if (value<(-2*math.pi)): ## whole circle right
                      return Tuple[float,str](value+2*math.pi,"R")
                    else:
                      return Tuple[float,str](value,"")
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
            #5 -> MemberSelector(Selector=Item2)
            -> Condition => #9
                WorkflowInput Source1 => #0
                -> Equal(Operand=StringProperty(Value=R)) => #1
                #0 -> Equal(Operand=StringProperty(Value=L)) => #2
                Source1=#1, Source3=#2 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            ExternalizedMapping(PortName) => #10
            #9, #10 -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r\n)
        #15, #11 -> Zip
        -> Add => #17
        #5 -> MemberSelector(Selector=Centroid) => #18
        #17, #18 -> Zip
        -> WorkflowOutput
    -> NestedWorkflow SaveTracking
        StringProperty(Value=tracking_) => #0
        SubscribeSubject FileNum => #1
        SubscribeSubject DataPath => #2
        #2, #0, #1 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        #5, #6 -> Bonsai.IO.CsvWriter(FileName=C:\mormyrid_data\20220124\tracking_1, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Item1,Item2.X,Item2.Y")
        -> WorkflowOutput
    #12 -> MemberSelector(Selector=Item1)
    #10 -> MemberSelector(Selector=Size)
    -> Take(Count=1)
    -> ReplaySubject FrameSize(BufferSize=nil)
    #10 -> WorkflowOutput
    #10, #6 -> Condition => #19
        WorkflowInput Source1

        ExternalizedMapping(Value(DisplayName=Save))
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    #19, #5 -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video_all1, Suffix=None, Overwrite=false)

    SubscribeSubject FrameSize => #21
    Timer(DueTime=PT2S, Period=PT0S) => #22
    #21, #22 -> SubscribeWhen => #23
    SubscribeSubject DataPath => #24
    #23, #24 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform SaveCroppedVideo
      Script:
        import datetime
        import time
        from datetime import date
        from shutil import copyfile
        import os
        import clr
        clr.AddReference("Bonsai.System")
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from Bonsai.IO import PathHelper, PathSuffix
        pipename = r'\\.\pipe\video_all'
        dayone = date.today()
        #trackpath = r'Z:\mormyrid_data\TrackingVideos'

        def process(value):
          file = open(value.Item2+'counter.txt','r')
        #  num=str(int(file.read())-1)
          num = file.read()
          file.close()

        #  if int(num)>0:
        #    pnum=str(int(num)-1)
        #    fname = value.Item2 +'video_' + pnum + '.avi'
        #    cfname= trackpath + r'\video_' + pnum + '.avi'
        #    copyfile(fname,cfname)

          fname = value.Item2 +'video_' + num + '.avi'
        #  cfname= trackpath + r'\video_' + num + '.avi'

          pipe=pipename + num

          num = str(int(num)+1)
          file = open(value.Item2 + 'counter.txt','w')
          file.write(num)
          file.close()
          inrate=50
          outrate=inrate
          brate="3M"
          width = value.Item1.Width
          height =value.Item1.Height
          os.system(str.format(r'ffmpeg -f rawvideo -vcodec rawvideo -y -s {0}x{1} -r {2} -pix_fmt gray -i {3} -vcodec mpeg4 -pix_fmt yuv420p -vb {4} -r {5} {6}',width,height,inrate,pipe,brate,outrate,fname))

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)
Bonsai.Scripting.PythonSource TimeOfDay => #16
  Script:
    import time

    @returns(str)
    def generate():
      result = time.localtime()
      while result.tm_hour!=7 and result.tm_hour!=19:
        result = time.localtime()
        time.sleep(100)
      if result.tm_hour==7:
        output='D'
      else:
        output='N'
      yield output
#16, #7 -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r\n)
-> Delay(DueTime=PT1H)
-> Repeat

ExternalizedMapping(TimeShift(DisplayName=EphysTimeShift)) => #20
ExternalizedMapping(TimeSpan(DisplayName=EphysTimeSpan)) => #21
ExternalizedMapping(SampleRate)
-> Bonsai.Ephys.Rhd2000EvalBoard => #23
  BitFileName="C:\Program Files\Open Ephys\rhd2000_usb3.bit"
  SampleRate=SampleRate30000Hz
  ExternalFastSettleEnabled=false
  LowerBandwidth=1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=false
  CableDelayA=nil
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
#23, #21, #20 -> TimeSpanWindow(TimeSpan=PT20M, TimeShift=PT20M)
-> SelectMany PeriodicEphys
    WorkflowInput Source1 => #0
    ExternalizedMapping(Save) => #1
    ExternalizedMapping("Headstage Channels") => #2
    ExternalizedMapping(DataChannels) => #3
    #0, #2, #3 -> NestedWorkflow ndddndndndnd
        WorkflowInput Source1
        -> MemberSelector(Selector=AmplifierData) => #1
        ExternalizedMapping(Channels(DisplayName="Headstage Channels")) => #2
        #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #3
        ExternalizedMapping(Channels(DisplayName=DataChannels)) => #4
        #3, #4 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15))
        -> Bonsai.Ephys.AdcScale(AdcType=Electrode) => #6
        ExternalizedMapping(Channels(DisplayName=ampTriggerChannel)) => #7
        ExternalizedMapping(ThresholdValue(DisplayName=AmpThreshold)) => #8
        ExternalizedMapping(Count(DisplayName=Presamples)) => #9
        #9, #6 -> Bonsai.Dsp.Delay(Count=30) => #10
        #7, #6 -> Bonsai.Dsp.SelectChannels(Channels(int=4))
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass)
        -> Bonsai.Dsp.Abs => #13
        #13, #8 -> Bonsai.Dsp.Threshold(ThresholdValue=500, MaxValue=1, ThresholdType=Binary) => #14
        #10, #14 -> Zip => #15
        ExternalizedMapping(Count(DisplayName=Windowsamples)) => #16
        #15, #16 -> Bonsai.Dsp.TriggeredBuffer(Count=900) => #17
        -> Bonsai.Dsp.Submatrix(StartRow=0, EndRow=nil, StartCol=0, EndCol=1) => #18
        #17, #18 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=300, Cutoff2=3000, KernelLength=30, FilterType=BandPass)
    #0, #1 -> NestedWorkflow SaveAdc
        WorkflowInput Source1
        -> MemberSelector(Selector=BoardAdcData) => #1
        ExternalizedMapping(Channels) => #2
        #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1)) => #3
        SubscribeSubject DataPath => #4
        StringProperty(Value=adc_) => #5
        SubscribeSubject FileNum => #6
        #4, #5, #6 -> CombineLatest
        -> Add
        -> PropertyMapping(Path) => #9
        ExternalizedMapping(Save) => #10
        #3, #10 -> Condition => #11
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #11, #9 -> Bonsai.Dsp.MatrixWriter(Path=C:\mormyrid_data\20220124\adc_1, Suffix=None, Overwrite=false, Layout=RowMajor)
        #3 -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SaveEphysTS
        WorkflowInput Source1
        -> MemberSelector(Selector=Timestamp)
        -> MemberSelector(Selector=Data) => #2
        ExternalizedMapping(Save) => #3
        #2, #3 -> Condition => #4
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject DataPath => #5
        StringProperty(Value=ephysTS_) => #6
        SubscribeSubject FileNum => #7
        #5, #6, #7 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #10
        #4, #10 -> Bonsai.IO.TextWriter(FileName=C:\mormyrid_data\20220124\ephysTS_1, Suffix=None, Buffered=true, Overwrite=false, Append=false)
        -> WorkflowOutput
    #0, #1, #2, #3 -> NestedWorkflow SaveAmp
        WorkflowInput Source1
        -> MemberSelector(Selector=AmplifierData) => #1
        ExternalizedMapping(Channels(DisplayName="Headstage Channels")) => #2
        #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #3
        SubscribeSubject DataPath => #4
        StringProperty(Value=amp_) => #5
        SubscribeSubject FileNum => #6
        #4, #5, #6 -> Zip
        -> Add
        -> PropertyMapping(Path) => #9
        ExternalizedMapping(Save) => #10
        ExternalizedMapping(Channels(DisplayName=DataChannels)) => #11
        #11, #3 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15)) => #12
        #12, #10 -> Condition => #13
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #13, #9 -> Bonsai.Dsp.MatrixWriter(Path=C:\mormyrid_data\20220124\amp_1, Suffix=None, Overwrite=false, Layout=RowMajor)
        #12 -> Bonsai.Ephys.AdcScale(AdcType=Electrode)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SaveAux
        WorkflowInput Source1
        -> MemberSelector(Selector=AuxiliaryData)
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2)) => #2
        ExternalizedMapping(Save) => #3
        #2, #3 -> Condition => #4
            WorkflowInput Source1

            ExternalizedMapping(Value(DisplayName=Save))
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject DataPath => #5
        StringProperty(Value=aux_) => #6
        SubscribeSubject FileNum => #7
        #5, #6, #7 -> Zip
        -> Add
        -> PropertyMapping(Path) => #10
        #4, #10 -> Bonsai.Dsp.MatrixWriter(Path=C:\mormyrid_data\20220124\aux_1, Suffix=None, Overwrite=false, Layout=RowMajor)
        #2 -> Bonsai.Ephys.AdcScale(AdcType=AuxiliaryInput)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SavePulses
        WorkflowInput Source1
        -> MemberSelector(Selector=BoardAdcData) => #1
        SubscribeSubject DataPath => #2
        StringProperty(Value=pulses_) => #3
        SubscribeSubject FileNum => #4
        #2, #3, #4 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(InputSampleRate) => #8
        ExternalizedMapping(SquelchThreshold) => #9
        ExternalizedMapping(Threshold) => #10
        ExternalizedMapping(Save) => #11
        #1, #7, #8, #9, #10, #11 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Ephys.AdcScale(AdcType=Electrode) => #1
            ExternalizedMapping(Channels(DisplayName=sync_chan)) => #2
            ExternalizedMapping(Channels(DisplayName=eod_chan)) => #3
            #1, #3 -> Bonsai.Dsp.SelectChannels(Channels(int=0)) => #4
            ExternalizedMapping(SampleRate(DisplayName=FilterSampleRate)) => #5
            ExternalizedMapping(Cutoff1(DisplayName=Cutoff_LPF)) => #6
            ExternalizedMapping(Cutoff1(DisplayName=Cutoff_HPF)) => #7
            #4, #5, #7 -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=500, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #8
            ExternalizedMapping(ThresholdValue(DisplayName=SquelchThreshold)) => #9
            #8, #9 -> Bonsai.Dsp.Threshold(ThresholdValue=20, MaxValue=1, ThresholdType=ToZero)
            #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #14
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #15
            #14, #15 -> Zip
            -> Add => #17
            #1 -> Bonsai.Dsp.SelectChannels(Channels(int=2)) => #18
            #18, #5, #6 -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=50, Cutoff2=0, KernelLength=60, FilterType=LowPass)
            -> Bonsai.Dsp.Threshold(ThresholdValue=2, MaxValue=1, ThresholdType=BinaryInv)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #22
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #23
            #22, #23 -> Zip
            -> Add => #25
            #17, #25, #8 -> Zip
            -> Bonsai.Dsp.Concat(Axis=0) => #27
            ExternalizedMapping(Threshold) => #28
            #27, #28 -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.1, double=0.5, double=0.5), WaveformRefinement=None) => #29
            -> Condition => #30
                WorkflowInput Source1
                -> MemberSelector(Selector=Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #31
                WorkflowInput Source1
                -> Concat => #1
                -> MemberSelector(Selector=ChannelIndex) => #2
                #1 -> MemberSelector(Selector=SampleIndex) => #3
                #2, #3 -> Zip
                -> WorkflowOutput
            ExternalizedMapping(FileName) => #32
            ExternalizedMapping(Save) => #33
            #31, #33 -> Condition => #34
                WorkflowInput Source1

                ExternalizedMapping(Value(DisplayName=Save))
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #32, #34 -> Bonsai.IO.CsvWriter(FileName=C:\mormyrid_data\20220124\pulses_1, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)
            ExternalizedMapping(InputSampleRate) => #36
            #30, #36 -> NestedWorkflow "EOD rate"
                WorkflowInput Source1
                -> SelectMany "EOD index" => #1
                    WorkflowInput Source1
                    -> Concat
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChannelIndex)
                        -> Equal(Operand=IntProperty(Value=0))
                        -> WorkflowOutput
                    -> MemberSelector(Selector=SampleIndex)
                    -> WorkflowOutput
                -> Skip(Count=1) => #2
                #2, #1 -> Zip
                -> Subtract => #4
                ExternalizedMapping(Value(DisplayName=InputSampleRate))
                -> DoubleProperty(Value=30000) => #6
                #6, #4 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #29 -> WorkflowOutput
        -> WorkflowOutput
    #0 -> NestedWorkflow EvokedAdc
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=BoardAdcData) => #1
        ExternalizedMapping(Channels(DisplayName=TriggerChannel)) => #2
        ExternalizedMapping(ThresholdValue(DisplayName=Threshold)) => #3
        ExternalizedMapping(Channels(DisplayName=DataChannels)) => #4
        #1, #4 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #6
        ExternalizedMapping(Count(DisplayName=Presamples)) => #7
        #6, #7 -> Bonsai.Dsp.Delay(Count=60) => #8
        #0 -> MemberSelector(Selector=BoardAdcData) => #9
        #9, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc)
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=8000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #12
        #12, #3 -> Bonsai.Dsp.Threshold(ThresholdValue=0.1, MaxValue=1, ThresholdType=Binary) => #13
        #8, #13 -> Zip => #14
        ExternalizedMapping(Count(DisplayName=Windowsamples)) => #15
        #14, #15 -> Bonsai.Dsp.TriggeredBuffer(Count=900)
        -> WorkflowOutput
    #0, #1 -> NestedWorkflow SaveLightChange
        WorkflowInput Source1
        -> MemberSelector(Selector=BoardAdcData) => #1
        SubscribeSubject DataPath => #2
        StringProperty(Value=light) => #3
        #2, #3 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Save) => #7
        ExternalizedMapping(LightChan) => #8
        #1, #6, #7, #8 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Ephys.AdcScale(AdcType=BoardAdc) => #1
            ExternalizedMapping(Channels(DisplayName=LightChan)) => #2
            #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=3))
            -> Bonsai.Dsp.Threshold(ThresholdValue=2.7, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=100, Cutoff2=0, KernelLength=60, FilterType=LowPass) => #5
            -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.5), WaveformRefinement=None) => #6
            -> WorkflowOutput
            #6 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #9
                WorkflowInput Source1
                -> Concat
                -> MemberSelector(Selector=SampleIndex) => #2
                SubscribeSubject FileNum => #3
                IntProperty(Value=1) => #4
                #3, #2, #4 -> CombineLatest
                -> WorkflowOutput
            ExternalizedMapping(Save) => #10
            #9, #10 -> Condition => #11
                WorkflowInput Source1

                ExternalizedMapping(Value(DisplayName=Save))
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #5 -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=-1, Shift=1)
            -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.5), WaveformRefinement=None)
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #15
                WorkflowInput Source1
                -> Concat
                -> MemberSelector(Selector=SampleIndex) => #2
                SubscribeSubject FileNum => #3
                IntProperty(Value=0) => #4
                #3, #2, #4 -> CombineLatest
                -> WorkflowOutput
            #10, #15 -> Condition => #16
                WorkflowInput Source1

                ExternalizedMapping(Value(DisplayName=Save))
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #11, #16 -> Merge => #17
            ExternalizedMapping(FileName) => #18
            #18, #17 -> Bonsai.IO.CsvWriter(FileName=C:\mormyrid_data\20220124\light, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput
    #0, #2, #3 -> NestedWorkflow EvokedAmpHPF
        WorkflowInput Source1
        -> MemberSelector(Selector=AmplifierData) => #1
        ExternalizedMapping(Channels(DisplayName="Headstage Channels")) => #2
        #1, #2 -> Bonsai.Dsp.SelectChannels(Channels(int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=17, int=18, int=19, int=20, int=21, int=22, int=23, int=24, int=25)) => #3
        ExternalizedMapping(Channels(DisplayName=DataChannels)) => #4
        #3, #4 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15))
        -> Bonsai.Ephys.AdcScale(AdcType=Electrode) => #6
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=300, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #7
        ExternalizedMapping(Channels(DisplayName=ampTriggerChannel)) => #8
        ExternalizedMapping(ThresholdValue(DisplayName=AmpThreshold)) => #9
        ExternalizedMapping(Count(DisplayName=Presamples)) => #10
        #10, #7 -> Bonsai.Dsp.Delay(Count=40) => #11
        #6, #8 -> Bonsai.Dsp.SelectChannels(Channels(int=4))
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=1000, Cutoff2=0, KernelLength=60, FilterType=HighPass)
        -> Bonsai.Dsp.Abs => #14
        #14, #9 -> Bonsai.Dsp.Threshold(ThresholdValue=500, MaxValue=1, ThresholdType=Binary) => #15
        #11, #15 -> Zip => #16
        ExternalizedMapping(Count(DisplayName=Windowsamples)) => #17
        #16, #17 -> Bonsai.Dsp.TriggeredBuffer(Count=900) => #18
        -> WorkflowOutput
        #18 -> Bonsai.Dsp.FrequencyFilter(SampleRate=30000, Cutoff1=200, Cutoff2=0, KernelLength=60, FilterType=HighPass)

    SubscribeSubject DataPath
    -> Bonsai.Scripting.PythonTransform FindFileNum
      Script:
        @returns(str)
        def process(value):
          fname = value + 'counter.txt'
          file= open(fname,'r')
          num=file.read()
          file.close()
          return num
    -> ReplaySubject FileNum(BufferSize=nil)

    Disable ExternalizedMapping(Channels(DisplayName=old_HS))
    -> Disable Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=24, int=25, int=26, int=27, int=28, int=29, int=30, int=31))

    Disable ExternalizedMapping(Channels(DisplayName=intan_HS))
    -> Disable Bonsai.Dsp.SelectChannels(Channels(int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15, int=16, int=17, int=18, int=19, int=20, int=21, int=22, int=23))

    Disable ExternalizedMapping(Channels(DisplayName=plexon_HS))
    -> Disable Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13, int=14, int=15))

    Disable ExternalizedMapping(Channels(DisplayName=implant))
    -> Disable Bonsai.Dsp.SelectChannels(Channels(int=2, int=3, int=4, int=5, int=6, int=7, int=8, int=9, int=10, int=11, int=12, int=13))
