<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Z:\mormyrid_data\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>20200713\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:GetFiles">
          <q1:Path>Z:\mormyrid_data\20200713\</q1:Path>
          <q1:SearchPattern>video_*.avi</q1:SearchPattern>
          <q1:SearchOption>TopDirectoryOnly</q1:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DataPath</Name>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringGetFiles">
        <MemberName>Path</MemberName>
        <Name>Path</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Concat" />
      </Expression>
      <Expression xsi:type="WindowWorkflow">
        <Name>ProcessVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>SaveVideoSyncTS</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Sample" />
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfStringTextWriter">
                    <MemberName>FileName</MemberName>
                    <Name>Video_SyncFile</Name>
                    <Value>Z:\AW\mormyrid_data\20180804\video_timestamp_</Value>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Index</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DataPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>video_syncTS_offline_</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:Grayscale" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:TextWriter">
                      <q1:FileName>Z:\mormyrid_data\20200713\video_syncTS_offline_0</q1:FileName>
                      <q1:Suffix>None</q1:Suffix>
                      <q1:Buffered>false</q1:Buffered>
                      <q1:Overwrite>false</q1:Overwrite>
                      <q1:Append>false</q1:Append>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Index" />
                  </Expression>
                  <Expression xsi:type="NestedWorkflow">
                    <Name>DetectLEDs</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="Skip">
                            <Count>1</Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q2:RoiActivityDetected">
                            <q2:Index>0</q2:Index>
                            <q2:Threshold>1000</q2:Threshold>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="LogicalAnd" />
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q2:RoiActivity">
                            <q2:Regions>
                              <q2:ArrayOfPoint>
                                <q2:Point>
                                  <q2:X>1113</q2:X>
                                  <q2:Y>1057</q2:Y>
                                </q2:Point>
                                <q2:Point>
                                  <q2:X>1210</q2:X>
                                  <q2:Y>1057</q2:Y>
                                </q2:Point>
                                <q2:Point>
                                  <q2:X>1210</q2:X>
                                  <q2:Y>1184</q2:Y>
                                </q2:Point>
                                <q2:Point>
                                  <q2:X>1113</q2:X>
                                  <q2:Y>1184</q2:Y>
                                </q2:Point>
                              </q2:ArrayOfPoint>
                            </q2:Regions>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedPropertyOfDoubleRoiActivityDetected">
                          <MemberName>Threshold</MemberName>
                          <Name>Threshold</Name>
                          <Value>1000</Value>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q2:Threshold">
                            <q2:ThresholdValue>108</q2:ThresholdValue>
                            <q2:MaxValue>255</q2:MaxValue>
                            <q2:ThresholdType>Binary</q2:ThresholdType>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>9</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>1</From>
                          <To>3</To>
                          <Label>Source2</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>6</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>5</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>5</From>
                          <To>4</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>6</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>7</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>8</From>
                          <To>2</To>
                          <Label>Source2</Label>
                        </Edge>
                        <Edge>
                          <From>9</From>
                          <To>7</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfDoubleRoiActivityDetected">
                    <MemberName>Threshold</MemberName>
                    <Name>LEDThreshold</Name>
                    <Value>1000</Value>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>9</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>0</From>
                    <To>13</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>12</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>12</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>11</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>11</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>14</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>10</From>
                    <To>11</To>
                    <Label>Source3</Label>
                  </Edge>
                  <Edge>
                    <From>11</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>12</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>13</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>14</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>15</From>
                    <To>14</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:FileCapture">
                <q2:FileName>Z:\mormyrid_data\20200713\video_0.avi</q2:FileName>
                <q2:PlaybackRate>350</q2:PlaybackRate>
                <q2:StartPosition>0</q2:StartPosition>
                <q2:PositionUnits>Frames</q2:PositionUnits>
                <q2:Loop>false</q2:Loop>
                <q2:Playing>true</q2:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringFileCapture">
              <MemberName>FileName</MemberName>
              <Name>InFileName</Name>
              <Value>C:\Users\Avner\iCloudDrive\Documents\Mormyrid_Data\Data\20180201\video_20180201_1113.avi</Value>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(str)
def process(value):
  i0=value.find("video_")+6
  s=value[i0:-4]
  return s</q3:Script>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>FileName</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>DataPath</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>In Range</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="GreaterThanOrEqual" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>first file</Name>
              <Value>0</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>Last file</Name>
              <Value>0</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="LessThanOrEqual" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(int)
def process(value):
  i0=value.find("video_")+6
  s=int(value[i0:-4])
  return s</q3:Script>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>0</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.GetFiles, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.GetFiles, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Concat, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.TextWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.TextWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Index, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivityDetected, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.LogicalAndBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BitwiseNotBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivity, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Double, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.RoiActivityDetected, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanOrEqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Int32, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.LessThanOrEqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>