WorkflowBuilder(Version=2.3.0)
Bonsai.PointGrey.FlyCapture(Index=0, ColorFormat=Bgr, ColorProcessing=Default)
-> TimeSpanWindow(TimeSpan=PT30M, TimeShift=PT30M10S) => #9
ExternalizedPropertyOfBooleanBooleanProperty SaveVideo(MemberName=Save, Value=false) => #13
#9, #13 -> SelectMany PeriodicVideo
    WorkflowInput Source1 => #11
    -> MemberSelector(Selector=Source.Image) => #8
    -> NestedWorkflow Fishtracker => #6
        IntProperty(Value=5)
        -> ExternalizedPropertyOfInt32ElementCountWindow Count(MemberName=Count, Value=5) => #10
        WorkflowInput Source1
        -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=29, Y=-1), Point(X=1020, Y=-1), Point(X=1020, Y=1180), Point(X=29, Y=1180)))
          MaskType=ToZero
          FillValue(Val0=128, Val1=128, Val2=128, Val3=128)
        -> Bonsai.Vision.Threshold(ThresholdValue=201, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #11
        -> MemberSelector(Selector=Source.Centroid) => #1
        #11 -> MemberSelector(Selector=Source.Orientation) => #9
        #9, #10 -> ElementCountWindow(Count=5, Skip=1)
        -> SelectMany MedianFlter => #7
            WorkflowInput Source1
            -> ToList
            -> Bonsai.Scripting.PythonTransform FindMedian
              Script:
                @returns(float)
                def process(value):
                  if(len(value)==0):
                    return 0
                  sort = sorted(value)
                  return sort[len(sort)/2]
            -> WorkflowOutput
        -> Skip(Count=1) => #6
        #7, #6 -> Zip
        -> Bonsai.Scripting.PythonTransform DetectJumps
          Script:
            import math

            @returns(float)
            def process(value):
              if ((value.Item2-value.Item1)>2): ## jumped up
                return -(math.pi)
              else:
                if ((value.Item2-value.Item1)<-2): ## jumped down
                  return math.pi
                else:
                  return 0
        -> Scan RunningAngle => #3
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Source.Value) => #2
            #0 -> MemberSelector(Selector=Source.Accumulation) => #3
            #2, #3 -> Zip
            -> Add
            -> Bonsai.Scripting.PythonTransform DetectFullCircle => #7
              Script:
                import math
                from System import Tuple

                @returns(Tuple[float,str])
                def process(value):
                  if (value>(2*math.pi)): ## whole circle left
                    return Tuple[float,str](value-2*math.pi,"L")
                  else:
                    if (value<(-2*math.pi)): ## whole circle right
                      return Tuple[float,str](value+2*math.pi,"R")
                    else:
                      return Tuple[float,str](value,"")
            -> MemberSelector(Selector=Source.Item1)
            -> WorkflowOutput
            #7 -> MemberSelector(Selector=Source.Item2)
            -> Condition
                WorkflowInput Source1 => #0
                -> Equal(Operand=StringProperty(Value=L)) => #2
                #0 -> Equal(Operand=StringProperty(Value=R)) => #4
                #4, #2 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
        #3, #7 -> Zip
        -> Add => #0
        #0, #1 -> Zip
        -> WorkflowOutput
    -> MemberSelector(Selector=Source.Item1)
    #8 -> MemberSelector(Selector=Source.Size)
    -> Take(Count=1)
    -> ReplaySubject FrameSize(BufferSize=nil)
    #8 -> NestedWorkflow BehavioralTriggering
        WorkflowInput Source1
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Vision.Threshold(ThresholdValue=216, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.RoiActivity => #18
          Regions
            ArrayOfPoint(Point(X=175, Y=900), Point(X=830, Y=900), Point(X=830, Y=1100), Point(X=175, Y=1100))
            ArrayOfPoint(Point(X=733, Y=625), Point(X=897, Y=625), Point(X=897, Y=805), Point(X=733, Y=805))
            ArrayOfPoint(Point(X=136, Y=130), Point(X=300, Y=130), Point(X=300, Y=360), Point(X=136, Y=360))
        ExternalizedPropertyOfDoubleRoiActivityDetected Threshold(MemberName=Threshold, Value=100000) => #32
        #18, #32 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=100000)
        -> PublishSubject ActivityHome
        #18, #32 -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=100000)
        -> PublishSubject ActivityNear
        #18, #32 -> Bonsai.Vision.RoiActivityDetected(Index=2, Threshold=100000)
        -> PublishSubject ActivityFar

        Timer(DueTime=PT0S, Period=PT0S) => #31
        -> SelectMany RoiHome => #28
            SubscribeSubject ActivityHome
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #31 -> Bonsai.Scripting.PythonTransform => #30
          Script:
            @returns(float)
            def process(value):
              import random
              return random.random()
        -> Bonsai.Scripting.PythonTransform => #27
          Script:
            @returns(bool)
            def process(value):
              if 0 < value < 0.5:
                return True
              else:
                return False
        #27, #28 -> CombineLatest
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Item1) => #21
        -> Unit => #15
        #21 -> SelectMany RoiNear
            SubscribeSubject ActivityNear
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> SelectMany ArduinoCommand
                WorkflowInput Source1
                -> StringProperty(Value=T)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Unit => #14
        #14, #15 -> Merge => #11
        #30 -> Bonsai.Scripting.PythonTransform => #29
          Script:
            @returns(bool)
            def process(value):
              if value > 0.5:
                return True
              else:
                return False
        #29, #28 -> CombineLatest
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Item1) => #22
        -> Unit => #17
        #22 -> SelectMany RoiFar
            SubscribeSubject ActivityFar
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> SelectMany ArduinoCommand
                WorkflowInput Source1
                -> StringProperty(Value=T)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Unit => #16
        #16, #17 -> Merge => #12
        #11, #12 -> Amb => #9
        ExternalizedTimeSpanOfDelay DeadTime(MemberName=DueTime, Value=PT5S) => #33
        #9, #33 -> Delay(DueTime=PT5S)
        -> Repeat
    ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #30
    #11, #30 -> Condition
        WorkflowInput Source1

        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> NestedWorkflow SaveVideoSyncTS
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.Metadata.embeddedTimeStamp) => #5
        #0 -> MemberSelector(Selector=Source.Image)
        -> Bonsai.Vision.Grayscale
        -> NestedWorkflow DetectLEDs
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=1091, Y=1044), Point(X=1141, Y=1044), Point(X=1141, Y=1144), Point(X=1091, Y=1144))))
            -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=150000) => #2
            -> Skip(Count=1) => #1
            #2 -> BitwiseNot => #6
            #6, #1 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #5, #6 -> Sample => #3
        SubscribeSubject DataPath => #10
        StringProperty(Value=video_syncTS) => #11
        #10, #11 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringTextWriter Video_SyncFile(MemberName=FileName, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\video_timestamp_) => #4
        Source2=#3, Source2=#4 -> Bonsai.IO.TextWriter(FileName=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\video_syncTS, Suffix=FileCount, Buffered=true, Overwrite=false, Append=false)
        -> WorkflowOutput
    #11, #30 -> Condition
        WorkflowInput Source1

        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> NestedWorkflow SaveVideoTS
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.Metadata.embeddedFrameCounter) => #12
        -> Skip(Count=1) => #9
        #9, #12 -> Zip
        -> Subtract => #5
        #0 -> MemberSelector(Selector=Source.Metadata.embeddedTimeStamp) => #13
        #13, #5 -> Zip => #3
        SubscribeSubject DataPath => #10
        StringProperty(Value=videoTS_) => #11
        #10, #11 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter VideoTSFile(MemberName=FileName, Value=C:\Users\Ephys\iCloudDrive\Documents\Mormyrid_Data\Data\frame_data_.csv) => #4
        #3, #4 -> Bonsai.IO.CsvWriter
          FileName=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\videoTS_
          Append=false
          Overwrite=false
          Suffix=FileCount
          IncludeHeader=false
          Selector="Source.Item1,Source.Item2"
        -> WorkflowOutput
    #6, #30 -> Condition
        WorkflowInput Source1

        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> NestedWorkflow SaveTracking
        WorkflowInput Source1 => #0
        SubscribeSubject DataPath => #6
        StringProperty(Value=tracking_) => #7
        #6, #7 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter TrackingFile(MemberName=FileName, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\tracking_data_.csv) => #3
        #3, #0 -> Bonsai.IO.CsvWriter
          FileName=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\tracking_
          Append=false
          Overwrite=false
          Suffix=FileCount
          IncludeHeader=false
          Selector="Source.Item1,Source.Item2.X,Source.Item2.Y"
        -> WorkflowOutput
    #8, #30 -> Condition
        WorkflowInput Source1

        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video_all, Suffix=None, Overwrite=false)

    Timer(DueTime=PT2S, Period=PT0S) => #13
    SubscribeSubject CropSize => #20
    #20, #13 -> SubscribeWhen
    -> Bonsai.Scripting.PythonTransform SaveCroppedVideo
      Script:
        import datetime
        import time
        from datetime import date
        import os
        import clr
        clr.AddReference("Bonsai.System")
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from Bonsai.IO import PathHelper, PathSuffix
        pipename = r'\\.\pipe\video_all'
        dayone = date.today()

        def process(value):
          today = date.today()
          sep="\\"
          month='{0:d}'.format(today.month)
          d1='{:%Y%m%d}'.format(dayone)
          d='{:%Y%m%d}'.format(today)
          T=time.strftime("%H%M", time.localtime())
          fname = "C:\\Users\\Ephys\\Documents\\bonsai-data\\Avner\\"+d1+sep+"video_"+d+"_"+T+".avi"

          inrate=75

          outrate=inrate

          brate="3M"

          width = value.Item3.Width
          height =value.Item3.Height

          cropW  = value.Item1
          cropH  = value.Item2
          cropX  = width/2-cropW/2
          cropY  = height/2-cropH/2

          sideW= value.Item5


          os.system(str.format(r'ffmpeg -f rawvideo -vcodec rawvideo -y -s {0}x{1} -r {2} -pix_fmt gray -i {3} -vcodec mp4 -pix_fmt yuv420p -vb {4} -r {5} {6}',width,height,inrate,pipename,brate,outrate,fname))

    SubscribeSubject FrameSize => #16
    ExternalizedPropertyOfInt32IntProperty CropWidth(MemberName=Value, Value=200)
    -> IntProperty(Value=200) => #14
    ExternalizedPropertyOfInt32IntProperty CropHeight(MemberName=Value, Value=650)
    -> IntProperty(Value=650) => #15
    ExternalizedPropertyOfInt32IntProperty SideX(MemberName=Value, Value=1200)
    -> IntProperty(Value=1200) => #22
    ExternalizedPropertyOfInt32IntProperty SideWidth(MemberName=Value, Value=280)
    -> IntProperty(Value=280) => #23
    #14, #15, #16, #22, #23 -> Zip
    -> Take(Count=1)
    -> ReplaySubject CropSize(BufferSize=nil)

Bonsai.Ephys.Rhd2000EvalBoard
  BitFileName=rhd2000_usb3.bit
  SampleRate=SampleRate20000Hz
  FastSettle=false
  LowerBandwidth=0.1
  UpperBandwidth=7500
  DspCutoffFrequency=50
  DspEnabled=true
  CableDelayA=nil
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
-> TimeSpanWindow(TimeSpan=PT30M, TimeShift=PT30M10S) => #11
ExternalizedPropertyOfBooleanBooleanProperty SaveEphys(MemberName=Save, Value=false) => #14
#11, #14 -> SelectMany PeriodicEphys
    WorkflowInput Source1 => #6
    ExternalizedPropertyOfArrayOfInt32SelectChannels DataChannels(MemberName=DataChannels, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=24, int=25, int=26, int=27, int=28, int=29, int=30, int=31)) => #7
    #6, #7 -> NestedWorkflow EvokedResponse
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.AmplifierData) => #11
        #0 -> MemberSelector(Selector=Source.BoardAdcData) => #14
        ExternalizedPropertyOfInt32TriggeredBuffer Windowsamples(MemberName=Count, Value=2000) => #4
        ExternalizedPropertyOfInt32Delay Presamples(MemberName=Count, Value=25) => #8
        ExternalizedPropertyOfDoubleThreshold Threshold(MemberName=ThresholdValue, Value=10000) => #10
        ExternalizedPropertyOfArrayOfInt32SelectChannels DataChannels(MemberName=Channels, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=24, int=25, int=26, int=27, int=28, int=29, int=30, int=31)) => #12
        #11, #12 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=24, int=25, int=26, int=27, int=28, int=29, int=30, int=31)) => #7
        #7, #8 -> Bonsai.Dsp.Delay(Count=25) => #5
        ExternalizedPropertyOfArrayOfInt32SelectChannels TriggerChannel(MemberName=Channels, Value(int=0)) => #15
        #14, #15 -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=-32768) => #9
        #9, #10 -> Bonsai.Dsp.Threshold(ThresholdValue=10000, MaxValue=1, ThresholdType=Binary) => #6
        #5, #6 -> Zip => #3
        #3, #4 -> Bonsai.Dsp.TriggeredBuffer(Count=2000)
        -> WorkflowOutput
    ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #8
    #6, #8 -> NestedWorkflow SaveAdc
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.BoardAdcData) => #9
        SubscribeSubject DataPath => #6
        StringProperty(Value=adc_) => #7
        #6, #7 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter AdcFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        ExternalizedPropertyOfArrayOfInt32SelectChannels Channels(MemberName=Channels, Value(int=0, int=1)) => #10
        #9, #10 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1)) => #8
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #12
        #8, #12 -> Condition => #11
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
            -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #11, #2 -> Bonsai.Dsp.MatrixWriter(Path=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\adc_, Suffix=FileCount, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput
    #6, #8 -> NestedWorkflow SavePulses
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.BoardAdcData) => #8
        SubscribeSubject DataPath => #6
        StringProperty(Value=pulses_) => #7
        #6, #7 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringCsvWriter PulsesFile(MemberName=FileName, Value=C:\Users\Ephys\iCloudDrive\Documents\Mormyrid_Data\Data\20171201\EOD_data.csv) => #2
        ExternalizedPropertyOfDoubleExternalizedPropertyOfDoubleFrequencyFilter InputSampleRate(MemberName=InputSampleRate, Value=20000) => #9
        ExternalizedPropertyOfDoubleThreshold SquelchThreshold(MemberName=SquelchThreshold, Value=5000) => #10
        ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=2000, double=0.5, double=0.5)) => #11
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #12
        #8, #2, #9, #10, #11, #12 -> NestedWorkflow DetectPulse
            WorkflowInput Source1
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=-32768) => #9
            -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Threshold(ThresholdValue=25000, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #22
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #16
            #22, #16 -> Zip
            -> Add => #21
            #9 -> Bonsai.Dsp.SelectChannels(Channels(int=0)) => #26
            #9 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
            -> Bonsai.Dsp.Threshold(ThresholdValue=25000, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=1, ThresholdType=Binary) => #33
            -> Bonsai.Dsp.Shift(Offset(X=1, Y=0), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #32
            #33, #32 -> Zip
            -> Add => #30
            ExternalizedPropertyOfDoubleFrequencyFilter Cutoff1(MemberName=Cutoff1, Value=500) => #11
            ExternalizedPropertyOfDoubleExternalizedPropertyOfDoubleFrequencyFilter InputSampleRate(MemberName=Value, Value=20000) => #17
            -> ExternalizedPropertyOfDoubleFrequencyFilter FilterSampleRate(MemberName=SamplingFrequency, Value=20000) => #10
            #26, #10, #11 -> Bonsai.Dsp.FrequencyFilter(SamplingFrequency=20000, Cutoff1=500, Cutoff2=0, KernelLength=60, FilterType=HighPass) => #7
            #7, #21, #30 -> Zip
            -> Bonsai.Dsp.Concat(Axis=0) => #5
            #17 -> ExternalizedPropertyOfInt32AudioPlayback AudioSampleRate(MemberName=Frequency, Value=20000) => #15
            ExternalizedPropertyOfDoubleThreshold SquelchThreshold(MemberName=ThresholdValue, Value=5000) => #18
            #7, #18 -> Bonsai.Dsp.Threshold(ThresholdValue=5000, MaxValue=1, ThresholdType=ToZero) => #20
            #20, #15 -> Bonsai.Audio.AudioPlayback(Frequency=20000)
            ExternalizedPropertyOfStringCsvWriter FileName(MemberName=FileName, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\pulses_) => #24
            ExternalizedPropertyOfArrayOfDoubleDetectSpikes Threshold(MemberName=Threshold, Value(double=2000, double=0.5, double=0.5)) => #25
            #5, #25 -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=2000, double=0.5, double=0.5), WaveformRefinement=None) => #4
            -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany => #2
                WorkflowInput Source1
                -> Concat => #2
                -> MemberSelector(Selector=Source.SampleIndex) => #1
                #2 -> MemberSelector(Selector=Source.ChannelIndex) => #3
                #3, #1 -> Zip
                -> WorkflowOutput
            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #28
            #2, #28 -> Condition => #27
                WorkflowInput Source1

                ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
                -> BooleanProperty(Value=false)
                -> WorkflowOutput
            Source2=#24, Source2=#27 -> Bonsai.IO.CsvWriter
              FileName=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\pulses_
              Append=true
              Overwrite=true
              Suffix=FileCount
              IncludeHeader=false
              Selector=Source
        -> WorkflowOutput
    #6, #8 -> NestedWorkflow SaveEphysTS
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.Timestamp)
        -> MemberSelector(Selector=Source.Data) => #3
        SubscribeSubject DataPath => #8
        StringProperty(Value=ephysTS_) => #9
        #8, #9 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringTextWriter EphysTSFile(MemberName=FileName, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\ephys_timestamp_) => #4
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #11
        #3, #11 -> Condition => #10
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
            -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #10, #4 -> Bonsai.IO.TextWriter(FileName=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\ephysTS_, Suffix=FileCount, Buffered=true, Overwrite=false, Append=false)
        -> WorkflowOutput
    #6, #7, #8 -> NestedWorkflow SaveAmp
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.AmplifierData) => #9
        SubscribeSubject DataPath => #6
        StringProperty(Value=amp_) => #7
        #6, #7 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter AmpFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        ExternalizedPropertyOfArrayOfInt32SelectChannels DataChannels(MemberName=Channels, Value(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=24, int=25, int=26, int=27, int=28, int=29, int=30, int=31)) => #10
        #9, #10 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3, int=4, int=5, int=6, int=7, int=24, int=25, int=26, int=27, int=28, int=29, int=30, int=31)) => #8
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #12
        #8, #12 -> Condition => #11
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
            -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #11, #2 -> Bonsai.Dsp.MatrixWriter(Path=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\amp_, Suffix=FileCount, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput
    #6, #8 -> NestedWorkflow SaveAux
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.AuxiliaryData)
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2)) => #8
        SubscribeSubject DataPath => #6
        StringProperty(Value=aux_) => #7
        #6, #7 -> Zip
        -> Add
        -> ExternalizedPropertyOfStringMatrixWriter AuxFile(MemberName=Path, Value=C:\Users\Ephys\Documents\bonsai-data\Avner\test\adc_data_) => #2
        ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Save, Value=false) => #11
        #8, #11 -> Condition => #10
            WorkflowInput Source1

            ExternalizedPropertyOfBooleanBooleanProperty Save(MemberName=Value, Value=false)
            -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #10, #2 -> Bonsai.Dsp.MatrixWriter(Path=C:\Users\Ephys\Documents\bonsai-data\Avner\20180424\aux_, Suffix=FileCount, Overwrite=false, Layout=RowMajor)
        -> WorkflowOutput

Timer(DueTime=PT0S, Period=PT1S)
-> Condition
    WorkflowInput Source1
    -> Mod(Operand=WorkflowPropertyOfInt64(Value=3))
    -> Equal(Operand=WorkflowPropertyOfInt64(Value=0))
    -> WorkflowOutput
-> SelectMany
    StringProperty(Value=B)
    -> WorkflowOutput
-> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\r\n)

StringProperty(Value=C:\Users\Ephys\Documents\bonsai-data\Avner\)
-> Bonsai.Scripting.PythonTransform
  Script:
    import time
    from datetime import date
    today = date.today()
    @returns(str)
    def process(value):
      sep="\\"
      month='{0:d}'.format(today.month)
      d='{:%Y%m%d}'.format(today)
      return value+d+sep
-> ReplaySubject DataPath(BufferSize=nil)
